# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: Linearize Readout

# The version string should be updated whenever changes are made to this config file
version: 1.0

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: LinearizeReadout

# Define that this driver is a signal generator without hardware communication
signal_generator: True
signal_analyzer: True

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
[Rotation - Q1 to Q2]
unit:
datatype: DOUBLE
group: Readout parameters
show_in_measurement_dlg: True

[Scale - Q1 to Q2]
unit:
datatype: DOUBLE
group: Readout parameters
show_in_measurement_dlg: True

[Rotation - Q2 to Q1]
unit:
datatype: DOUBLE
group: Readout parameters
show_in_measurement_dlg: True

[Scale - Q2 to Q1]
unit:
datatype: DOUBLE
group: Readout parameters
show_in_measurement_dlg: True

[Rotation - Q1]
unit:
datatype: DOUBLE
group: Readout parameters
show_in_measurement_dlg: True

[Scale - Q1]
unit: V
datatype: DOUBLE
group: Readout parameters
show_in_measurement_dlg: True

[Offset - Q1]
unit: V
datatype: DOUBLE
group: Readout parameters
show_in_measurement_dlg: True

[Rotation - Q2]
unit:
datatype: DOUBLE
group: Readout parameters
show_in_measurement_dlg: True

[Scale - Q2]
unit: V
datatype: DOUBLE
group: Readout parameters
show_in_measurement_dlg: True

[Offset - Q2]
unit: V
datatype: DOUBLE
group: Readout parameters
show_in_measurement_dlg: True

[Signal Q1 - Input]
unit: V
x_name: Time
x_unit: s
datatype: COMPLEX
permission: WRITE
show_in_measurement_dlg: True

[Signal Q2 - Input]
unit: V
x_name: Time
x_unit: s
datatype: COMPLEX
permission: WRITE
show_in_measurement_dlg: True

[Voltage, QB1]
unit: V
datatype: COMPLEX
permission: READ
show_in_measurement_dlg: True

[Voltage, QB2]
unit: V
datatype: COMPLEX
permission: READ
show_in_measurement_dlg: True