# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: Multi-Qubit Pulse Generator - composite QB

# The version string should be updated whenever changes are made to this config file
version: 1.0

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: MultiQubit_PulseGenerator

# Define that this driver is a signal generator without hardware communication
signal_generator: True
signal_analyzer: True

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
[Sequence]
datatype: COMBO
combo_def_1: Rabi
combo_def_2: CP/CPMG
combo_def_3: Pulse train
combo_def_4: 1-QB Randomized Benchmarking
combo_def_5: 2-QB Randomized Benchmarking
combo_def_6: Custom
group: Sequence
section: Sequence
show_in_measurement_dlg: True

[Custom Python file]
datatype: PATH
tooltip: Python file with custom Sequence class. The class must be named "CustomSequence"
state_quant: Sequence
state_value_1: Custom
group: Sequence
section: Sequence

[Number of qubits]
datatype: COMBO
combo_def_1: One
combo_def_2: Two
combo_def_3: Three
combo_def_4: Four
combo_def_5: Five
combo_def_6: Six
combo_def_7: Seven
combo_def_8: Eight
combo_def_9: Nine
def_value: Two
group: Sequence
section: Sequence

[Pulse spacing]
datatype: DOUBLE
unit: s
def_value: 20E-9
low_lim: 0
group: Sequence
section: Sequence
show_in_measurement_dlg: True

[Local XY control]
datatype: BOOLEAN
def_value: 1
group: Sequence
section: Sequence

[Simultaneous pulses]
datatype: BOOLEAN
tooltip: If False, all pulses are separated in time.
def_value: 1
group: Sequence
section: Sequence

[Sample rate]
datatype: DOUBLE
def_value: 1.2E9
group: Waveform
section: Waveform
show_in_measurement_dlg: True

[Trim waveform to sequence]
label: Adjust waveform to sequence length
tooltip: Automatically adjusts the number of points in the waveform
datatype: BOOLEAN
def_value: 1
group: Waveform
section: Waveform

[Number of points]
datatype: DOUBLE
def_value: 240E3
state_quant: Trim waveform to sequence
state_value: False
group: Waveform
section: Waveform
show_in_measurement_dlg: True

[Align pulses to end of waveform]
datatype: BOOLEAN
state_quant: Trim waveform to sequence
state_value: False
def_value: 0
group: Waveform
section: Waveform

[First pulse delay]
datatype: DOUBLE
unit: s
def_value: 100E-9
group: Delays
section: Waveform

[Qubit 1 XY Delay]
datatype: DOUBLE
def_value: 0
unit: s
group: Delays
section: Waveform

[Qubit 1 Z Delay]
datatype: DOUBLE
def_value: 0
unit: s
group: Delays
section: Waveform

[Qubit 2 XY Delay]
datatype: DOUBLE
def_value: 0
unit: s
group: Delays
section: Waveform

[Qubit 2 Z Delay]
datatype: DOUBLE
def_value: 0
unit: s
group: Delays
section: Waveform

[Qubit 3 XY Delay]
datatype: DOUBLE
def_value: 0
unit: s
group: Delays
section: Waveform

[Qubit 3 Z Delay]
datatype: DOUBLE
def_value: 0
unit: s
group: Delays
section: Waveform

[Qubit 4 XY Delay]
datatype: DOUBLE
def_value: 0
unit: s
group: Delays
section: Waveform

[Qubit 4 Z Delay]
datatype: DOUBLE
def_value: 0
unit: s
group: Delays
section: Waveform

[Qubit 5 XY Delay]
datatype: DOUBLE
def_value: 0
unit: s
group: Delays
section: Waveform

[Qubit 5 Z Delay]
datatype: DOUBLE
def_value: 0
unit: s
group: Delays
section: Waveform

[Qubit 6 XY Delay]
datatype: DOUBLE
def_value: 0
unit: s
group: Delays
section: Waveform

[Qubit 6 Z Delay]
datatype: DOUBLE
def_value: 0
unit: s
group: Delays
section: Waveform

[Qubit 7 XY Delay]
datatype: DOUBLE
def_value: 0
unit: s
group: Delays
section: Waveform

[Qubit 7 Z Delay]
datatype: DOUBLE
def_value: 0
unit: s
group: Delays
section: Waveform

[Qubit 8 XY Delay]
datatype: DOUBLE
def_value: 0
unit: s
group: Delays
section: Waveform

[Qubit 8 Z Delay]
datatype: DOUBLE
def_value: 0
unit: s
group: Delays
section: Waveform

[Qubit 9 XY Delay]
datatype: DOUBLE
def_value: 0
unit: s
group: Delays
section: Waveform

[Qubit 9 Z Delay]
datatype: DOUBLE
def_value: 0
unit: s
group: Delays
section: Waveform

[Pulse]
datatype: COMBO
combo_def_1: Xp
combo_def_2: X2p
combo_def_3: Yp
combo_def_4: Y2p
combo_def_5: ZXp
combo_def_6: ZYp
combo_def_7: ZX2p
combo_def_8: ZY2p
combo_def_9: CPh
state_quant: Sequence
state_value_1: Pulse train
group: Pulse train
section: Sequence

[# of pulses]
datatype: DOUBLE
def_value: 1
low_lim: 0
state_quant: Sequence
state_value_1: Pulse train
group: Pulse train
section: Sequence

[Alternate pulse direction]
datatype: BOOLEAN
def_value: False
state_quant: Sequence
state_value_1: Pulse train
group: Pulse train
section: Sequence

[# of pi pulses]
datatype: DOUBLE
tooltip: Number of refocusing pulses. Set to -1 for generating pulse sequences for T1 experiments
def_value: 1
low_lim: -1
state_quant: Sequence
state_value_1: CP/CPMG
group: CPMG
section: Sequence

[Sequence duration]
datatype: DOUBLE
unit: s
def_value: 1E-6
low_lim: 0
state_quant: Sequence
state_value_1: CP/CPMG
group: CPMG
section: Sequence

[Add pi pulses to Q]
datatype: BOOLEAN
def_value: True
state_quant: Sequence
state_value_1: CP/CPMG
group: CPMG
section: Sequence

[Edge-to-edge pulses]
datatype: BOOLEAN
def_value: True
state_quant: Sequence
state_value_1: CP/CPMG
group: CPMG
section: Sequence

# Randomized benchmarking

[Number of Cliffords]
datatype: DOUBLE
def_value: 17
low_lim: 1
group: Randomized Benchmarking
section: Sequence
state_quant: Sequence
state_value_1: 1-QB Randomized Benchmarking
state_value_2: 2-QB Randomized Benchmarking
show_in_measurement_dlg: True

[Randomize]
datatype: DOUBLE
def_value: 0
group: Randomized Benchmarking
tooltip: Randomize gate sequence only if "Randomize" value changes or "Number of Cliffords" changes
section: Sequence
state_quant: Sequence
state_value_1: 1-QB Randomized Benchmarking
state_value_2: 2-QB Randomized Benchmarking
show_in_measurement_dlg: True

[Qubits to Benchmark]
datatype: COMBO
combo_def_1: 1-2
combo_def_2: 2-3
combo_def_3: 3-4
combo_def_4: 4-5
combo_def_5: 5-6
combo_def_6: 6-7
combo_def_7: 7-8
combo_def_8: 8-9
state_quant: Sequence
state_value_1: 2-QB Randomized Benchmarking
group: Randomized Benchmarking
section: Sequence
show_in_measurement_dlg: True

[Interleave 1-QB Gate]
datatype: BOOLEAN
def_value: 0
state_quant: Sequence
state_value_1: 1-QB Randomized Benchmarking
group: Randomized Benchmarking
section: Sequence
show_in_measurement_dlg: True

[Interleaved 1-QB Gate]
datatype: COMBO
combo_def_1: ZXp
combo_def_2: ZXm
combo_def_3: ZX2p
combo_def_4: ZX2m
combo_def_5: ZYp
combo_def_6: ZYm
combo_def_7: ZY2p
combo_def_8: ZY2m
combo_def_9: Z0
combo_def_10: Zp
combo_def_11: Z2p
combo_def_12: Zm
combo_def_13: Z2m
combo_def_14: VZp
state_quant: Interleave 1-QB Gate
state_value_1: 1
group: Randomized Benchmarking
section: Sequence
show_in_measurement_dlg: True

[Interleave 2-QB Gate]
datatype: BOOLEAN
def_value: 0
state_quant: Sequence
state_value_1: 2-QB Randomized Benchmarking
group: Randomized Benchmarking
section: Sequence
show_in_measurement_dlg: True

[Interleaved 2-QB Gate]
datatype: COMBO
combo_def_1: CZ
combo_def_2: CZEcho
state_quant: Interleave 2-QB Gate
state_value_1: 1
group: Randomized Benchmarking
section: Sequence
show_in_measurement_dlg: True

# Custom sequence parameters

[Parameter #1]
datatype: DOUBLE
def_value: 0.0
# state_quant: Sequence
# state_value_1: Custom
group: Custom
section: Sequence

[Parameter #2]
datatype: DOUBLE
def_value: 0.0
# state_quant: Sequence
# state_value_1: Custom
group: Custom
section: Sequence

[Parameter #3]
datatype: DOUBLE
def_value: 0.0
# state_quant: Sequence
# state_value_1: Custom
group: Custom
section: Sequence

[Parameter #4]
datatype: DOUBLE
def_value: 0.0
# state_quant: Sequence
# state_value_1: Custom
group: Custom
section: Sequence

[Parameter #5]
datatype: DOUBLE
def_value: 0.0
# state_quant: Sequence
# state_value_1: Custom
group: Custom
section: Sequence

[Parameter #6]
datatype: DOUBLE
def_value: 0.0
# state_quant: Sequence
# state_value_1: Custom
group: Custom
section: Sequence

[Parameter #7]
datatype: DOUBLE
def_value: 0.0
# state_quant: Sequence
# state_value_1: Custom
group: Custom
section: Sequence

[Parameter #8]
datatype: DOUBLE
def_value: 0.0
# state_quant: Sequence
# state_value_1: Custom
group: Custom
section: Sequence

[Parameter #9]
datatype: DOUBLE
def_value: 0.0
# state_quant: Sequence
# state_value_1: Custom
group: Custom
section: Sequence

[Parameter #10]
datatype: DOUBLE
def_value: 0.0
# state_quant: Sequence
# state_value_1: Custom
group: Custom
section: Sequence

# XY Pulses
#######################
[Pulse type]
datatype: COMBO
combo_def_1: Gaussian
combo_def_2: Square
combo_def_3: Ramp
combo_def_4: Cosine
group: Pulse settings
section: 1-QB gates XY

[Truncation range]
datatype: DOUBLE
def_value: 3
state_quant: Pulse type
state_value_1: Gaussian
group: Pulse settings
section: 1-QB gates XY

[Start at zero]
datatype: BOOLEAN
def_value: 0
state_quant: Pulse type
state_value_1: Gaussian
group: Pulse settings
section: 1-QB gates XY

[Use DRAG]
datatype: BOOLEAN
def_value: False
group: Pulse settings
section: 1-QB gates XY

[Uniform amplitude]
label: Uniform amplitude
datatype: BOOLEAN
def_value: False
group: Pulse settings
section: 1-QB gates XY

[Amplitude]
datatype: DOUBLE
unit: V
def_value: 1.0
state_quant: Uniform amplitude
state_value: True
group: Pulse settings
section: 1-QB gates XY
show_in_measurement_dlg: True

[Uniform pulse shape]
datatype: BOOLEAN
def_value: True
group: Pulse settings
section: 1-QB gates XY

[Width]
label: Width
datatype: DOUBLE
unit: s
def_value: 10E-9
group: Pulse settings
section: 1-QB gates XY
state_quant: Uniform pulse shape
state_value: 1
show_in_measurement_dlg: True

[Plateau]
label: Plateau
datatype: DOUBLE
unit: s
group: Pulse settings
section: 1-QB gates XY
state_quant: Uniform pulse shape
state_value: 1
show_in_measurement_dlg: True


# Actual pulses
####################
[Amplitude #1]
label: Amplitude
datatype: DOUBLE
unit: V
def_value: 1.0
state_quant: Uniform amplitude
state_value: False
group: Pulse #1
section: 1-QB gates XY
show_in_measurement_dlg: True

[Width #1]
label: Width
datatype: DOUBLE
unit: s
def_value: 10E-9
group: Pulse #1
section: 1-QB gates XY
state_quant: Uniform pulse shape
state_value: 0

[Plateau #1]
label: Plateau
datatype: DOUBLE
unit: s
group: Pulse #1
section: 1-QB gates XY
state_quant: Uniform pulse shape
state_value: 0

[Frequency #1]
label: Frequency
datatype: DOUBLE
unit: Hz
group: Pulse #1
section: 1-QB gates XY

[DRAG scaling #1]
label: DRAG scaling
datatype: DOUBLE
unit: s
def_value: .25E-9
state_quant: Use DRAG
state_value: 1
group: Pulse #1
section: 1-QB gates XY

[DRAG frequency detuning #1]
label: DRAG frequency detuning
datatype: DOUBLE
unit: Hz
def_value: 0
state_quant: Use DRAG
state_value: 1
group: Pulse #1
section: 1-QB gates XY

# Actual pulses
####################
[Amplitude #2]
label: Amplitude
datatype: DOUBLE
unit: V
def_value: 1.0
state_quant: Uniform amplitude
state_value: False
group: Pulse #2
section: 1-QB gates XY
show_in_measurement_dlg: True

[Width #2]
label: Width
datatype: DOUBLE
unit: s
def_value: 10E-9
group: Pulse #2
section: 1-QB gates XY
state_quant: Uniform pulse shape
state_value: 0

[Plateau #2]
label: Plateau
datatype: DOUBLE
unit: s
group: Pulse #2
section: 1-QB gates XY
state_quant: Uniform pulse shape
state_value: 0

[Frequency #2]
label: Frequency
datatype: DOUBLE
unit: Hz
group: Pulse #2
section: 1-QB gates XY

[DRAG scaling #2]
label: DRAG scaling
datatype: DOUBLE
unit: s
def_value: .25E-9
state_quant: Use DRAG
state_value: 1
group: Pulse #2
section: 1-QB gates XY

[DRAG frequency detuning #2]
label: DRAG frequency detuning
datatype: DOUBLE
unit: Hz
def_value: 0
state_quant: Use DRAG
state_value: 1
group: Pulse #2
section: 1-QB gates XY

# Actual pulses
####################
[Amplitude #3]
label: Amplitude
datatype: DOUBLE
unit: V
def_value: 1.0
state_quant: Uniform amplitude
state_value: False
group: Pulse #3
section: 1-QB gates XY
show_in_measurement_dlg: True

[Width #3]
label: Width
datatype: DOUBLE
unit: s
def_value: 10E-9
group: Pulse #3
section: 1-QB gates XY
state_quant: Uniform pulse shape
state_value: 0

[Plateau #3]
label: Plateau
datatype: DOUBLE
unit: s
group: Pulse #3
section: 1-QB gates XY
state_quant: Uniform pulse shape
state_value: 0

[Frequency #3]
label: Frequency
datatype: DOUBLE
unit: Hz
group: Pulse #3
section: 1-QB gates XY

[DRAG scaling #3]
label: DRAG scaling
datatype: DOUBLE
unit: s
def_value: .25E-9
state_quant: Use DRAG
state_value: 1
group: Pulse #3
section: 1-QB gates XY

[DRAG frequency detuning #3]
label: DRAG frequency detuning
datatype: DOUBLE
unit: Hz
def_value: 0
state_quant: Use DRAG
state_value: 1
group: Pulse #3
section: 1-QB gates XY

# Actual pulses
####################
[Amplitude #4]
label: Amplitude
datatype: DOUBLE
unit: V
def_value: 1.0
state_quant: Uniform amplitude
state_value: False
group: Pulse #4
section: 1-QB gates XY
show_in_measurement_dlg: True

[Width #4]
label: Width
datatype: DOUBLE
unit: s
def_value: 10E-9
group: Pulse #4
section: 1-QB gates XY
state_quant: Uniform pulse shape
state_value: 0

[Plateau #4]
label: Plateau
datatype: DOUBLE
unit: s
group: Pulse #4
section: 1-QB gates XY
state_quant: Uniform pulse shape
state_value: 0

[Frequency #4]
label: Frequency
datatype: DOUBLE
unit: Hz
group: Pulse #4
section: 1-QB gates XY

[DRAG scaling #4]
label: DRAG scaling
datatype: DOUBLE
unit: s
def_value: .25E-9
state_quant: Use DRAG
state_value: 1
group: Pulse #4
section: 1-QB gates XY

[DRAG frequency detuning #4]
label: DRAG frequency detuning
datatype: DOUBLE
unit: Hz
def_value: 0
state_quant: Use DRAG
state_value: 1
group: Pulse #4
section: 1-QB gates XY

# Actual pulses
####################
[Amplitude #5]
label: Amplitude
datatype: DOUBLE
unit: V
def_value: 1.0
state_quant: Uniform amplitude
state_value: False
group: Pulse #5
section: 1-QB gates XY
show_in_measurement_dlg: True

[Width #5]
label: Width
datatype: DOUBLE
unit: s
def_value: 10E-9
group: Pulse #5
section: 1-QB gates XY
state_quant: Uniform pulse shape
state_value: 0

[Plateau #5]
label: Plateau
datatype: DOUBLE
unit: s
group: Pulse #5
section: 1-QB gates XY
state_quant: Uniform pulse shape
state_value: 0

[Frequency #5]
label: Frequency
datatype: DOUBLE
unit: Hz
group: Pulse #5
section: 1-QB gates XY

[DRAG scaling #5]
label: DRAG scaling
datatype: DOUBLE
unit: s
def_value: .25E-9
state_quant: Use DRAG
state_value: 1
group: Pulse #5
section: 1-QB gates XY

[DRAG frequency detuning #5]
label: DRAG frequency detuning
datatype: DOUBLE
unit: Hz
def_value: 0
state_quant: Use DRAG
state_value: 1
group: Pulse #5
section: 1-QB gates XY

# Actual pulses
####################
[Amplitude #6]
label: Amplitude
datatype: DOUBLE
unit: V
def_value: 1.0
state_quant: Uniform amplitude
state_value: False
group: Pulse #6
section: 1-QB gates XY
show_in_measurement_dlg: True

[Width #6]
label: Width
datatype: DOUBLE
unit: s
def_value: 10E-9
group: Pulse #6
section: 1-QB gates XY
state_quant: Uniform pulse shape
state_value: 0

[Plateau #6]
label: Plateau
datatype: DOUBLE
unit: s
group: Pulse #6
section: 1-QB gates XY
state_quant: Uniform pulse shape
state_value: 0

[Frequency #6]
label: Frequency
datatype: DOUBLE
unit: Hz
group: Pulse #6
section: 1-QB gates XY

[DRAG scaling #6]
label: DRAG scaling
datatype: DOUBLE
unit: s
def_value: .25E-9
state_quant: Use DRAG
state_value: 1
group: Pulse #6
section: 1-QB gates XY

[DRAG frequency detuning #6]
label: DRAG frequency detuning
datatype: DOUBLE
unit: Hz
def_value: 0
state_quant: Use DRAG
state_value: 1
group: Pulse #6
section: 1-QB gates XY

# Actual pulses
####################
[Amplitude #7]
label: Amplitude
datatype: DOUBLE
unit: V
def_value: 1.0
state_quant: Uniform amplitude
state_value: False
group: Pulse #7
section: 1-QB gates XY
show_in_measurement_dlg: True

[Width #7]
label: Width
datatype: DOUBLE
unit: s
def_value: 10E-9
group: Pulse #7
section: 1-QB gates XY
state_quant: Uniform pulse shape
state_value: 0

[Plateau #7]
label: Plateau
datatype: DOUBLE
unit: s
group: Pulse #7
section: 1-QB gates XY
state_quant: Uniform pulse shape
state_value: 0

[Frequency #7]
label: Frequency
datatype: DOUBLE
unit: Hz
group: Pulse #7
section: 1-QB gates XY

[DRAG scaling #7]
label: DRAG scaling
datatype: DOUBLE
unit: s
def_value: .25E-9
state_quant: Use DRAG
state_value: 1
group: Pulse #7
section: 1-QB gates XY

[DRAG frequency detuning #7]
label: DRAG frequency detuning
datatype: DOUBLE
unit: Hz
def_value: 0
state_quant: Use DRAG
state_value: 1
group: Pulse #7
section: 1-QB gates XY

# Actual pulses
####################
[Amplitude #8]
label: Amplitude
datatype: DOUBLE
unit: V
def_value: 1.0
state_quant: Uniform amplitude
state_value: False
group: Pulse #8
section: 1-QB gates XY
show_in_measurement_dlg: True

[Width #8]
label: Width
datatype: DOUBLE
unit: s
def_value: 10E-9
group: Pulse #8
section: 1-QB gates XY
state_quant: Uniform pulse shape
state_value: 0

[Plateau #8]
label: Plateau
datatype: DOUBLE
unit: s
group: Pulse #8
section: 1-QB gates XY
state_quant: Uniform pulse shape
state_value: 0

[Frequency #8]
label: Frequency
datatype: DOUBLE
unit: Hz
group: Pulse #8
section: 1-QB gates XY

[DRAG scaling #8]
label: DRAG scaling
datatype: DOUBLE
unit: s
def_value: .25E-9
state_quant: Use DRAG
state_value: 1
group: Pulse #8
section: 1-QB gates XY

[DRAG frequency detuning #8]
label: DRAG frequency detuning
datatype: DOUBLE
unit: Hz
def_value: 0
state_quant: Use DRAG
state_value: 1
group: Pulse #8
section: 1-QB gates XY

# Actual pulses
####################
[Amplitude #9]
label: Amplitude
datatype: DOUBLE
unit: V
def_value: 1.0
state_quant: Uniform amplitude
state_value: False
group: Pulse #9
section: 1-QB gates XY
show_in_measurement_dlg: True

[Width #9]
label: Width
datatype: DOUBLE
unit: s
def_value: 10E-9
group: Pulse #9
section: 1-QB gates XY
state_quant: Uniform pulse shape
state_value: 0

[Plateau #9]
label: Plateau
datatype: DOUBLE
unit: s
group: Pulse #9
section: 1-QB gates XY
state_quant: Uniform pulse shape
state_value: 0

[Frequency #9]
label: Frequency
datatype: DOUBLE
unit: Hz
group: Pulse #9
section: 1-QB gates XY

[DRAG scaling #9]
label: DRAG scaling
datatype: DOUBLE
unit: s
def_value: .25E-9
state_quant: Use DRAG
state_value: 1
group: Pulse #9
section: 1-QB gates XY

[DRAG frequency detuning #9]
label: DRAG frequency detuning
datatype: DOUBLE
unit: Hz
def_value: 0
state_quant: Use DRAG
state_value: 1
group: Pulse #9
section: 1-QB gates XY

# Pulses
#######################
[Pulse type, Z]
label: Pulse type
datatype: COMBO
combo_def_1: Gaussian
combo_def_2: Square
combo_def_3: Ramp
combo_def_4: Cosine
combo_def_5: Sin Square
combo_def_6: Sin Square Half
combo_def_7: Landau-Zener
combo_def_8: Bang-Bang
combo_def_9: Bang-Bang Gaussian
combo_def_10: LZ Initialize
combo_def_11: Bi-harmonic
combo_def_12: Random
group: Pulse settings
section: 1-QB gates Z

[Truncation range, Z]
label: Truncation range
datatype: DOUBLE
def_value: 3
state_quant: Pulse type, Z
state_value_1: Gaussian
state_value_2: Landau-Zener
state_value_3: Bang-Bang Gaussian
state_value_4: Random
group: Pulse settings
section: 1-QB gates Z

[Start at zero, Z]
label: Start at zero
datatype: BOOLEAN
def_value: 0
state_quant: Pulse type, Z
state_value_1: Gaussian
state_value_2: Landau-Zener
state_value_3: Bang-Bang Gaussian
group: Pulse settings
section: 1-QB gates Z

[Use modulation freq as timing reference]
label: Use modulation freq as timing reference
datatype: BOOLEAN
def_value: 0
group: Pulse settings
section: 1-QB gates Z

[Uniform amplitude, Z]
label: Uniform amplitude
datatype: BOOLEAN
def_value: False
group: Pulse settings
section: 1-QB gates Z

[Amplitude, Z]
label: Amplitude
datatype: DOUBLE
unit: V
def_value: 1.0
state_quant: Uniform amplitude, Z
state_value: True
group: Pulse settings
section: 1-QB gates Z
show_in_measurement_dlg: True

[Uniform pulse shape, Z]
datatype: BOOLEAN
def_value: True
group: Pulse settings
section: 1-QB gates Z

[Width, Z]
label: Width
datatype: DOUBLE
unit: s
def_value: 10E-9
group: Pulse settings
section: 1-QB gates Z
state_quant: Uniform pulse shape, Z
state_value: 1
show_in_measurement_dlg: True

[Plateau, Z]
label: Plateau
datatype: DOUBLE
unit: s
group: Pulse settings
section: 1-QB gates Z
state_quant: Uniform pulse shape, Z
state_value: 1
show_in_measurement_dlg: True

[Add Gaussian random noise]
datatype: BOOLEAN
def_value: 0
group: Pulse settings
section: 1-QB gates Z

[Noise amplitude]
datatype: DOUBLE
def_value: 0
unit: V
group: Pulse settings
section: 1-QB gates Z

# Actual pulses
####################
[Assume linear dependence #1, Z]
label: Assume linear dependence
datatype: BOOLEAN
def_value: True
tooltip: Assumes a linear dependence between frequency and voltage. If false, use the qubit spectrum.
group: Pulse #1
section: 1-QB gates Z
state_quant: Uniform pulse shape, Z
state_value: 0

[df/dV #1, Z]
label: df/dV
datatype: DOUBLE
unit: Hz/V
def_value: 0.5E9
tooltip: Translating pulseshape from frequency space to voltage assuming a linear dependence
group: Pulse #1
section: 1-QB gates Z
state_quant: Uniform pulse shape, Z
state_value: 0

[f initial #1, Z]
label: f initial
datatype: DOUBLE
unit: Hz
def_value: 1.0
state_quant: Uniform amplitude, Z
state_value: False
group: Pulse #1
section: 1-QB gates Z
show_in_measurement_dlg: True

[f final #1, Z]
label: f final
datatype: DOUBLE
unit: Hz
def_value: 1.0
state_quant: Uniform amplitude, Z
state_value: False
group: Pulse #1
section: 1-QB gates Z
show_in_measurement_dlg: True

[Width #1 Left, Z]
label: Width Left
datatype: DOUBLE
unit: s
def_value: 10E-9
group: Pulse #1
section: 1-QB gates Z
state_quant: Uniform pulse shape, Z
state_value: 0

[Width #1 Right, Z]
label: Width Right
datatype: DOUBLE
unit: s
def_value: 10E-9
group: Pulse #1
section: 1-QB gates Z
state_quant: Uniform pulse shape, Z
state_value: 0

[Plateau #1, Z]
label: Plateau
datatype: DOUBLE
unit: s
group: Pulse #1
section: 1-QB gates Z
state_quant: Uniform pulse shape, Z
state_value: 0

[Phase #1, Z]
label: Phase
datatype: DOUBLE
unit: s
group: Pulse #1
section: 1-QB gates Z
state_quant: Uniform pulse shape, Z
state_value: 0

[Plateau #1 pi/2, Z]
label: Plateau pi/2
datatype: DOUBLE
unit: s
group: Pulse #1
section: 1-QB gates Z
state_quant: Uniform pulse shape, Z
state_value: 0

[Phase #1 pi/2, Z]
label: Phase pi/2
datatype: DOUBLE
unit: s
group: Pulse #1
section: 1-QB gates Z
state_quant: Uniform pulse shape, Z
state_value: 0

[Frequency #1, Z]
label: Frequency
datatype: DOUBLE
unit: s
group: Pulse #1
section: 1-QB gates Z
state_quant: Uniform pulse shape, Z
state_value: 0


# Actual pulses
####################
[Assume linear dependence #2, Z]
label: Assume linear dependence
datatype: BOOLEAN
def_value: True
tooltip: Assumes a linear dependence between frequency and voltage. If false, use the qubit spectrum.
group: Pulse #2
section: 1-QB gates Z
state_quant: Uniform pulse shape, Z
state_value: 0

[df/dV #2, Z]
label: df/dV
datatype: DOUBLE
unit: Hz/V
def_value: 0.5E9
tooltip: Translating pulseshape from frequency space to voltage assuming a linear dependence
group: Pulse #2
section: 1-QB gates Z
state_quant: Uniform pulse shape, Z
state_value: 0

[f initial #2, Z]
label: f initial
datatype: DOUBLE
unit: Hz
def_value: 1.0
state_quant: Uniform amplitude, Z
state_value: False
group: Pulse #2
section: 1-QB gates Z
show_in_measurement_dlg: True

[f final #2, Z]
label: f final
datatype: DOUBLE
unit: Hz
def_value: 1.0
state_quant: Uniform amplitude, Z
state_value: False
group: Pulse #2
section: 1-QB gates Z
show_in_measurement_dlg: True

[Width #2 Left, Z]
label: Width Left
datatype: DOUBLE
unit: s
def_value: 10E-9
group: Pulse #2
section: 1-QB gates Z
state_quant: Uniform pulse shape, Z
state_value: 0

[Width #2 Right, Z]
label: Width Right
datatype: DOUBLE
unit: s
def_value: 10E-9
group: Pulse #2
section: 1-QB gates Z
state_quant: Uniform pulse shape, Z
state_value: 0

[Plateau #2, Z]
label: Plateau
datatype: DOUBLE
unit: s
group: Pulse #2
section: 1-QB gates Z
state_quant: Uniform pulse shape, Z
state_value: 0

[Phase #2, Z]
label: Phase
datatype: DOUBLE
unit: s
group: Pulse #2
section: 1-QB gates Z
state_quant: Uniform pulse shape, Z
state_value: 0

[Plateau #2 pi/2, Z]
label: Plateau pi/2
datatype: DOUBLE
unit: s
group: Pulse #2
section: 1-QB gates Z
state_quant: Uniform pulse shape, Z
state_value: 0

[Phase #2 pi/2, Z]
label: Phase pi/2
datatype: DOUBLE
unit: s
group: Pulse #2
section: 1-QB gates Z
state_quant: Uniform pulse shape, Z
state_value: 0

[Frequency #2, Z]
label: Frequency
datatype: DOUBLE
unit: s
group: Pulse #2
section: 1-QB gates Z
state_quant: Uniform pulse shape, Z
state_value: 0

# Actual pulses
####################
[Assume linear dependence #3, Z]
label: Assume linear dependence
datatype: BOOLEAN
def_value: True
tooltip: Assumes a linear dependence between frequency and voltage. If false, use the qubit spectrum.
group: Pulse #3
section: 1-QB gates Z
state_quant: Uniform pulse shape, Z
state_value: 0

[df/dV #3, Z]
label: df/dV
datatype: DOUBLE
unit: Hz/V
def_value: 0.5E9
tooltip: Translating pulseshape from frequency space to voltage assuming a linear dependence
group: Pulse #3
section: 1-QB gates Z
state_quant: Uniform pulse shape, Z
state_value: 0

[f initial #3, Z]
label: f initial
datatype: DOUBLE
unit: Hz
def_value: 1.0
state_quant: Uniform amplitude, Z
state_value: False
group: Pulse #3
section: 1-QB gates Z
show_in_measurement_dlg: True

[f final #3, Z]
label: f final
datatype: DOUBLE
unit: Hz
def_value: 1.0
state_quant: Uniform amplitude, Z
state_value: False
group: Pulse #3
section: 1-QB gates Z
show_in_measurement_dlg: True

[Width #3 Left, Z]
label: Width Left
datatype: DOUBLE
unit: s
def_value: 10E-9
group: Pulse #3
section: 1-QB gates Z
state_quant: Uniform pulse shape, Z
state_value: 0

[Width #3 Right, Z]
label: Width Right
datatype: DOUBLE
unit: s
def_value: 10E-9
group: Pulse #3
section: 1-QB gates Z
state_quant: Uniform pulse shape, Z
state_value: 0

[Plateau #3, Z]
label: Plateau
datatype: DOUBLE
unit: s
group: Pulse #3
section: 1-QB gates Z
state_quant: Uniform pulse shape, Z
state_value: 0

[Phase #3, Z]
label: Phase
datatype: DOUBLE
unit: s
group: Pulse #3
section: 1-QB gates Z
state_quant: Uniform pulse shape, Z
state_value: 0

[Plateau #3 pi/2, Z]
label: Plateau pi/2
datatype: DOUBLE
unit: s
group: Pulse #3
section: 1-QB gates Z
state_quant: Uniform pulse shape, Z
state_value: 0

[Phase #3 pi/2, Z]
label: Phase pi/2
datatype: DOUBLE
unit: s
group: Pulse #3
section: 1-QB gates Z
state_quant: Uniform pulse shape, Z
state_value: 0

[Frequency #3, Z]
label: Frequency
datatype: DOUBLE
unit: s
group: Pulse #3
section: 1-QB gates Z
state_quant: Uniform pulse shape, Z
state_value: 0

# Actual pulses
####################
[Assume linear dependence #4, Z]
label: Assume linear dependence
datatype: BOOLEAN
def_value: True
tooltip: Assumes a linear dependence between frequency and voltage. If false, use the qubit spectrum.
group: Pulse #4
section: 1-QB gates Z
state_quant: Uniform pulse shape, Z
state_value: 0

[df/dV #4, Z]
label: df/dV
datatype: DOUBLE
unit: Hz/V
def_value: 0.5E9
tooltip: Translating pulseshape from frequency space to voltage assuming a linear dependence
group: Pulse #4
section: 1-QB gates Z
state_quant: Uniform pulse shape, Z
state_value: 0

[f initial #4, Z]
label: f initial
datatype: DOUBLE
unit: Hz
def_value: 1.0
state_quant: Uniform amplitude, Z
state_value: False
group: Pulse #4
section: 1-QB gates Z
show_in_measurement_dlg: True

[f final #4, Z]
label: f final
datatype: DOUBLE
unit: Hz
def_value: 1.0
state_quant: Uniform amplitude, Z
state_value: False
group: Pulse #4
section: 1-QB gates Z
show_in_measurement_dlg: True

[Width #4 Left, Z]
label: Width Left
datatype: DOUBLE
unit: s
def_value: 10E-9
group: Pulse #4
section: 1-QB gates Z
state_quant: Uniform pulse shape, Z
state_value: 0

[Width #4 Right, Z]
label: Width Right
datatype: DOUBLE
unit: s
def_value: 10E-9
group: Pulse #4
section: 1-QB gates Z
state_quant: Uniform pulse shape, Z
state_value: 0

[Plateau #4, Z]
label: Plateau
datatype: DOUBLE
unit: s
group: Pulse #4
section: 1-QB gates Z
state_quant: Uniform pulse shape, Z
state_value: 0

[Phase #4, Z]
label: Phase
datatype: DOUBLE
unit: s
group: Pulse #4
section: 1-QB gates Z
state_quant: Uniform pulse shape, Z
state_value: 0

[Plateau #4 pi/2, Z]
label: Plateau pi/2
datatype: DOUBLE
unit: s
group: Pulse #4
section: 1-QB gates Z
state_quant: Uniform pulse shape, Z
state_value: 0

[Phase #4 pi/2, Z]
label: Phase pi/2
datatype: DOUBLE
unit: s
group: Pulse #4
section: 1-QB gates Z
state_quant: Uniform pulse shape, Z
state_value: 0

[Frequency #4, Z]
label: Frequency
datatype: DOUBLE
unit: s
group: Pulse #4
section: 1-QB gates Z
state_quant: Uniform pulse shape, Z
state_value: 0


# Actual pulses
####################
[Amplitude #5, Z]
label: Amplitude
datatype: DOUBLE
unit: V
def_value: 1.0
state_quant: Uniform amplitude, Z
state_value: False
group: Pulse #5
section: 1-QB gates Z
show_in_measurement_dlg: True

[Width #5, Z]
label: Width
datatype: DOUBLE
unit: s
def_value: 10E-9
group: Pulse #5
section: 1-QB gates Z
state_quant: Uniform pulse shape, Z
state_value: 0

[Plateau #5, Z]
label: Plateau
datatype: DOUBLE
unit: s
group: Pulse #5
section: 1-QB gates Z
state_quant: Uniform pulse shape, Z
state_value: 0


# Actual pulses
####################
[Amplitude #6, Z]
label: Amplitude
datatype: DOUBLE
unit: V
def_value: 1.0
state_quant: Uniform amplitude, Z
state_value: False
group: Pulse #6
section: 1-QB gates Z
show_in_measurement_dlg: True

[Width #6, Z]
label: Width
datatype: DOUBLE
unit: s
def_value: 10E-9
group: Pulse #6
section: 1-QB gates Z
state_quant: Uniform pulse shape, Z
state_value: 0

[Plateau #6, Z]
label: Plateau
datatype: DOUBLE
unit: s
group: Pulse #6
section: 1-QB gates Z
state_quant: Uniform pulse shape, Z
state_value: 0


# Actual pulses
####################
[Amplitude #7, Z]
label: Amplitude
datatype: DOUBLE
unit: V
def_value: 1.0
state_quant: Uniform amplitude, Z
state_value: False
group: Pulse #7
section: 1-QB gates Z
show_in_measurement_dlg: True

[Width #7, Z]
label: Width
datatype: DOUBLE
unit: s
def_value: 10E-9
group: Pulse #7
section: 1-QB gates Z
state_quant: Uniform pulse shape, Z
state_value: 0

[Plateau #7, Z]
label: Plateau
datatype: DOUBLE
unit: s
group: Pulse #7
section: 1-QB gates Z
state_quant: Uniform pulse shape, Z
state_value: 0

# Actual pulses
####################
[Amplitude #8, Z]
label: Amplitude
datatype: DOUBLE
unit: V
def_value: 1.0
state_quant: Uniform amplitude, Z
state_value: False
group: Pulse #8
section: 1-QB gates Z
show_in_measurement_dlg: True

[Width #8, Z]
label: Width
datatype: DOUBLE
unit: s
def_value: 10E-9
group: Pulse #8
section: 1-QB gates Z
state_quant: Uniform pulse shape, Z
state_value: 0

[Plateau #8, Z]
label: Plateau
datatype: DOUBLE
unit: s
group: Pulse #8
section: 1-QB gates Z
state_quant: Uniform pulse shape, Z
state_value: 0

# Actual pulses
####################
[Amplitude #9, Z]
label: Amplitude
datatype: DOUBLE
unit: V
def_value: 1.0
state_quant: Uniform amplitude, Z
state_value: False
group: Pulse #9
section: 1-QB gates Z
show_in_measurement_dlg: True

[Width #9, Z]
label: Width
datatype: DOUBLE
unit: s
def_value: 10E-9
group: Pulse #9
section: 1-QB gates Z
state_quant: Uniform pulse shape, Z
state_value: 0

[Plateau #9, Z]
label: Plateau
datatype: DOUBLE
unit: s
group: Pulse #9
section: 1-QB gates Z
state_quant: Uniform pulse shape, Z
state_value: 0

# Pulses
#######################
[Pulse type, Z-init]
label: Pulse type
datatype: COMBO
combo_def_1: Gaussian
combo_def_2: Square
combo_def_3: Ramp
combo_def_4: Cosine
combo_def_5: LZ Initialize
group: Pulse settings
section: 1-QB gates Z-init

[Truncation range, Z-init]
label: Truncation range
datatype: DOUBLE
def_value: 3
state_quant: Pulse type, Z-init
state_value_1: Gaussian
state_value_2: LZ Initialize
group: Pulse settings
section: 1-QB gates Z-init

[Start at zero, Z-init]
label: Start at zero
datatype: BOOLEAN
def_value: 0
state_quant: Pulse type, Z-init
state_value_1: Gaussian
group: Pulse settings
section: 1-QB gates Z-init

[Uniform amplitude, Z-init]
label: Uniform amplitude
datatype: BOOLEAN
def_value: False
group: Pulse settings
section: 1-QB gates Z-init

[Amplitude, Z-init]
label: Amplitude
datatype: DOUBLE
unit: V
def_value: 1.0
state_quant: Uniform amplitude, Z-init
state_value: True
group: Pulse settings
section: 1-QB gates Z-init
show_in_measurement_dlg: True

[Uniform pulse shape, Z-init]
datatype: BOOLEAN
def_value: True
group: Pulse settings
section: 1-QB gates Z-init

[Width, Z-init]
label: Width
datatype: DOUBLE
unit: s
def_value: 10E-9
group: Pulse settings
section: 1-QB gates Z-init
state_quant: Uniform pulse shape, Z-init
state_value: 1
show_in_measurement_dlg: True

[Plateau, Z-init]
label: Plateau
datatype: DOUBLE
unit: s
group: Pulse settings
section: 1-QB gates Z-init
state_quant: Uniform pulse shape, Z-init
state_value: 1
show_in_measurement_dlg: True

# Actual pulses
####################
[Assume linear dependence #1, Z-init]
label: Assume linear dependence
datatype: BOOLEAN
def_value: True
tooltip: Assumes a linear dependence between frequency and voltage. If false, use the qubit spectrum.
group: Pulse #1
section: 1-QB gates Z-init
state_quant: Uniform pulse shape, Z-init
state_value: 0

[df/dV #1, Z-init]
label: df/dV
datatype: DOUBLE
unit: Hz/V
def_value: 0.5E9
tooltip: Translating pulseshape from frequency space to voltage assuming a linear dependence
group: Pulse #1
section: 1-QB gates Z-init
state_quant: Uniform pulse shape, Z-init
state_value: 0

[f initial #1, Z-init]
label: f initial
datatype: DOUBLE
unit: Hz
def_value: 1.0
state_quant: Uniform amplitude, Z-init
state_value: False
group: Pulse #1
section: 1-QB gates Z-init
show_in_measurement_dlg: True

[f final #1, Z-init]
label: f final
datatype: DOUBLE
unit: Hz
def_value: 1.0
state_quant: Uniform amplitude, Z-init
state_value: False
group: Pulse #1
section: 1-QB gates Z-init
show_in_measurement_dlg: True

[f final2 #1, Z-init]
label: f final2
datatype: DOUBLE
unit: Hz
def_value: 1.0
state_quant: Uniform amplitude, Z-init
state_value: False
group: Pulse #1
section: 1-QB gates Z-init
show_in_measurement_dlg: True

[Ramp width #1, Z-init]
label: Ramp width
datatype: DOUBLE
unit: s
def_value: 10e-9
state_quant: Uniform amplitude, Z-init
state_value: False
group: Pulse #1
section: 1-QB gates Z-init
show_in_measurement_dlg: True

[Width #1 Left, Z-init]
label: Width Left
datatype: DOUBLE
unit: s
def_value: 10E-9
group: Pulse #1
section: 1-QB gates Z-init
state_quant: Uniform pulse shape, Z-init
state_value: 0

[Width #1 Right, Z-init]
label: Width Right
datatype: DOUBLE
unit: s
def_value: 10E-9
group: Pulse #1
section: 1-QB gates Z-init
state_quant: Uniform pulse shape, Z-init
state_value: 0

[Plateau #1, Z-init]
label: Plateau
datatype: DOUBLE
unit: s
group: Pulse #1
section: 1-QB gates Z-init
state_quant: Uniform pulse shape, Z-init
state_value: 0

[Frequency #1, Z-init]
label: Frequency
datatype: DOUBLE
unit: s
group: Pulse #1
section: 1-QB gates Z-init
state_quant: Uniform pulse shape, Z-init
state_value: 0

# Actual pulses
####################
[Assume linear dependence #2, Z-init]
label: Assume linear dependence
datatype: BOOLEAN
def_value: True
tooltip: Assumes a linear dependence between frequency and voltage. If false, use the qubit spectrum.
group: Pulse #2
section: 1-QB gates Z-init
state_quant: Uniform pulse shape, Z-init
state_value: 0

[df/dV #2, Z-init]
label: df/dV
datatype: DOUBLE
unit: Hz/V
def_value: 0.5E9
tooltip: Translating pulseshape from frequency space to voltage assuming a linear dependence
group: Pulse #2
section: 1-QB gates Z-init
state_quant: Uniform pulse shape, Z-init
state_value: 0

[f initial #2, Z-init]
label: f initial
datatype: DOUBLE
unit: Hz
def_value: 1.0
state_quant: Uniform amplitude, Z-init
state_value: False
group: Pulse #2
section: 1-QB gates Z-init
show_in_measurement_dlg: True

[f final #2, Z-init]
label: f final
datatype: DOUBLE
unit: Hz
def_value: 1.0
state_quant: Uniform amplitude, Z-init
state_value: False
group: Pulse #2
section: 1-QB gates Z-init
show_in_measurement_dlg: True

[f final2 #2, Z-init]
label: f final2
datatype: DOUBLE
unit: Hz
def_value: 1.0
state_quant: Uniform amplitude, Z-init
state_value: False
group: Pulse #2
section: 1-QB gates Z-init
show_in_measurement_dlg: True

[Ramp width #2, Z-init]
label: Ramp width
datatype: DOUBLE
unit: s
def_value: 10e-9
state_quant: Uniform amplitude, Z-init
state_value: False
group: Pulse #2
section: 1-QB gates Z-init
show_in_measurement_dlg: True

[Width #2 Left, Z-init]
label: Width Left
datatype: DOUBLE
unit: s
def_value: 10E-9
group: Pulse #2
section: 1-QB gates Z-init
state_quant: Uniform pulse shape, Z-init
state_value: 0

[Width #2 Right, Z-init]
label: Width Right
datatype: DOUBLE
unit: s
def_value: 10E-9
group: Pulse #2
section: 1-QB gates Z-init
state_quant: Uniform pulse shape, Z-init
state_value: 0

[Plateau #2, Z-init]
label: Plateau
datatype: DOUBLE
unit: s
group: Pulse #2
section: 1-QB gates Z-init
state_quant: Uniform pulse shape, Z-init
state_value: 0

[Frequency #2, Z-init]
label: Frequency
datatype: DOUBLE
unit: s
group: Pulse #2
section: 1-QB gates Z-init
state_quant: Uniform pulse shape, Z-init
state_value: 0

[Assume linear dependence #3, Z-init]
label: Assume linear dependence
datatype: BOOLEAN
def_value: True
tooltip: Assumes a linear dependence between frequency and voltage. If false, use the qubit spectrum.
group: Pulse #3
section: 1-QB gates Z-init
state_quant: Uniform pulse shape, Z-init
state_value: 0

[df/dV #3, Z-init]
label: df/dV
datatype: DOUBLE
unit: Hz/V
def_value: 0.5E9
tooltip: Translating pulseshape from frequency space to voltage assuming a linear dependence
group: Pulse #3
section: 1-QB gates Z-init
state_quant: Uniform pulse shape, Z-init
state_value: 0

[f initial #3, Z-init]
label: f initial
datatype: DOUBLE
unit: Hz
def_value: 1.0
state_quant: Uniform amplitude, Z-init
state_value: False
group: Pulse #3
section: 1-QB gates Z-init
show_in_measurement_dlg: True

[f final #3, Z-init]
label: f final
datatype: DOUBLE
unit: Hz
def_value: 1.0
state_quant: Uniform amplitude, Z-init
state_value: False
group: Pulse #3
section: 1-QB gates Z-init
show_in_measurement_dlg: True

[f final2 #3, Z-init]
label: f final2
datatype: DOUBLE
unit: Hz
def_value: 1.0
state_quant: Uniform amplitude, Z-init
state_value: False
group: Pulse #3
section: 1-QB gates Z-init
show_in_measurement_dlg: True

[Ramp width #3, Z-init]
label: Ramp width
datatype: DOUBLE
unit: s
def_value: 10e-9
state_quant: Uniform amplitude, Z-init
state_value: False
group: Pulse #3
section: 1-QB gates Z-init
show_in_measurement_dlg: True

[Width #3 Left, Z-init]
label: Width Left
datatype: DOUBLE
unit: s
def_value: 10E-9
group: Pulse #3
section: 1-QB gates Z-init
state_quant: Uniform pulse shape, Z-init
state_value: 0

[Width #3 Right, Z-init]
label: Width Right
datatype: DOUBLE
unit: s
def_value: 10E-9
group: Pulse #3
section: 1-QB gates Z-init
state_quant: Uniform pulse shape, Z-init
state_value: 0

[Plateau #3, Z-init]
label: Plateau
datatype: DOUBLE
unit: s
group: Pulse #3
section: 1-QB gates Z-init
state_quant: Uniform pulse shape, Z-init
state_value: 0

[Frequency #3, Z-init]
label: Frequency
datatype: DOUBLE
unit: s
group: Pulse #3
section: 1-QB gates Z-init
state_quant: Uniform pulse shape, Z-init
state_value: 0

[Assume linear dependence #4, Z-init]
label: Assume linear dependence
datatype: BOOLEAN
def_value: True
tooltip: Assumes a linear dependence between frequency and voltage. If false, use the qubit spectrum.
group: Pulse #4
section: 1-QB gates Z-init
state_quant: Uniform pulse shape, Z-init
state_value: 0

[df/dV #4, Z-init]
label: df/dV
datatype: DOUBLE
unit: Hz/V
def_value: 0.5E9
tooltip: Translating pulseshape from frequency space to voltage assuming a linear dependence
group: Pulse #4
section: 1-QB gates Z-init
state_quant: Uniform pulse shape, Z-init
state_value: 0

[f initial #4, Z-init]
label: f initial
datatype: DOUBLE
unit: Hz
def_value: 1.0
state_quant: Uniform amplitude, Z-init
state_value: False
group: Pulse #4
section: 1-QB gates Z-init
show_in_measurement_dlg: True

[f final #4, Z-init]
label: f final
datatype: DOUBLE
unit: Hz
def_value: 1.0
state_quant: Uniform amplitude, Z-init
state_value: False
group: Pulse #4
section: 1-QB gates Z-init
show_in_measurement_dlg: True

[f final2 #4, Z-init]
label: f final2
datatype: DOUBLE
unit: Hz
def_value: 1.0
state_quant: Uniform amplitude, Z-init
state_value: False
group: Pulse #4
section: 1-QB gates Z-init
show_in_measurement_dlg: True

[Ramp width #4, Z-init]
label: Ramp width
datatype: DOUBLE
unit: s
def_value: 10e-9
state_quant: Uniform amplitude, Z-init
state_value: False
group: Pulse #4
section: 1-QB gates Z-init
show_in_measurement_dlg: True

[Width #4 Left, Z-init]
label: Width Left
datatype: DOUBLE
unit: s
def_value: 10E-9
group: Pulse #4
section: 1-QB gates Z-init
state_quant: Uniform pulse shape, Z-init
state_value: 0

[Width #4 Right, Z-init]
label: Width Right
datatype: DOUBLE
unit: s
def_value: 10E-9
group: Pulse #4
section: 1-QB gates Z-init
state_quant: Uniform pulse shape, Z-init
state_value: 0

[Plateau #4, Z-init]
label: Plateau
datatype: DOUBLE
unit: s
group: Pulse #4
section: 1-QB gates Z-init
state_quant: Uniform pulse shape, Z-init
state_value: 0

[Frequency #4, Z-init]
label: Frequency
datatype: DOUBLE
unit: s
group: Pulse #4
section: 1-QB gates Z-init
state_quant: Uniform pulse shape, Z-init
state_value: 0

# Pulses
#######################
[Pulse type, Z-alt]
label: Pulse type
datatype: COMBO
combo_def_1: Gaussian
combo_def_2: Square
combo_def_3: Ramp
combo_def_4: Cosine
combo_def_5: Sin Square
combo_def_6: Sin Square Half
combo_def_7: Landau-Zener
combo_def_8: Bang-Bang
combo_def_9: Bang-Bang Gaussian
combo_def_10: LZ Initialize
combo_def_11: Bi-harmonic
combo_def_12: Random
group: Pulse settings
section: 1-QB gates Z-alt

[Truncation range, Z-alt]
label: Truncation range
datatype: DOUBLE
def_value: 3
state_quant: Pulse type, Z-alt
state_value_1: Gaussian
state_value_2: Landau-Zener
state_value_3: Bang-Bang Gaussian
state_value_4: Random
group: Pulse settings
section: 1-QB gates Z-alt

[Start at zero, Z-alt]
label: Start at zero
datatype: BOOLEAN
def_value: 0
state_quant: Pulse type, Z-alt
state_value_1: Gaussian
state_value_2: Landau-Zener
state_value_3: Bang-Bang Gaussian
group: Pulse settings
section: 1-QB gates Z-alt

[Uniform amplitude, Z-alt]
label: Uniform amplitude
datatype: BOOLEAN
def_value: False
group: Pulse settings
section: 1-QB gates Z-alt

[Amplitude, Z-alt]
label: Amplitude
datatype: DOUBLE
unit: V
def_value: 1.0
state_quant: Uniform amplitude, Z-alt
state_value: True
group: Pulse settings
section: 1-QB gates Z-alt
show_in_measurement_dlg: True

[Uniform pulse shape, Z-alt]
datatype: BOOLEAN
def_value: True
group: Pulse settings
section: 1-QB gates Z-alt

[Width, Z-alt]
label: Width
datatype: DOUBLE
unit: s
def_value: 10E-9
group: Pulse settings
section: 1-QB gates Z-alt
state_quant: Uniform pulse shape, Z-alt
state_value: 1
show_in_measurement_dlg: True

[Plateau, Z-alt]
label: Plateau
datatype: DOUBLE
unit: s
group: Pulse settings
section: 1-QB gates Z-alt
state_quant: Uniform pulse shape, Z-alt
state_value: 1
show_in_measurement_dlg: True

# Actual pulses
####################
[Assume linear dependence #1, Z-alt]
label: Assume linear dependence
datatype: BOOLEAN
def_value: True
tooltip: Assumes a linear dependence between frequency and voltage. If false, use the qubit spectrum.
group: Pulse #1
section: 1-QB gates Z-alt
state_quant: Uniform pulse shape, Z-alt
state_value: 0

[df/dV #1, Z-alt]
label: df/dV
datatype: DOUBLE
unit: Hz/V
def_value: 0.5E9
tooltip: Translating pulseshape from frequency space to voltage assuming a linear dependence
group: Pulse #1
section: 1-QB gates Z-alt
state_quant: Uniform pulse shape, Z-alt
state_value: 0

[f initial #1, Z-alt]
label: f initial
datatype: DOUBLE
unit: Hz
def_value: 1.0
state_quant: Uniform amplitude, Z-alt
state_value: False
group: Pulse #1
section: 1-QB gates Z-alt
show_in_measurement_dlg: True

[f final #1, Z-alt]
label: f final
datatype: DOUBLE
unit: Hz
def_value: 1.0
state_quant: Uniform amplitude, Z-alt
state_value: False
group: Pulse #1
section: 1-QB gates Z-alt
show_in_measurement_dlg: True

[Width #1 Left, Z-alt]
label: Width Left
datatype: DOUBLE
unit: s
def_value: 10E-9
group: Pulse #1
section: 1-QB gates Z-alt
state_quant: Uniform pulse shape, Z-alt
state_value: 0

[Width #1 Right, Z-alt]
label: Width Right
datatype: DOUBLE
unit: s
def_value: 10E-9
group: Pulse #1
section: 1-QB gates Z-alt
state_quant: Uniform pulse shape, Z-alt
state_value: 0

[Plateau #1, Z-alt]
label: Plateau
datatype: DOUBLE
unit: s
group: Pulse #1
section: 1-QB gates Z-alt
state_quant: Uniform pulse shape, Z-alt
state_value: 0

[Frequency #1, Z-alt]
label: Frequency
datatype: DOUBLE
unit: s
group: Pulse #1
section: 1-QB gates Z-alt
state_quant: Uniform pulse shape, Z-alt
state_value: 0

# Actual pulses
####################
[Assume linear dependence #2, Z-alt]
label: Assume linear dependence
datatype: BOOLEAN
def_value: True
tooltip: Assumes a linear dependence between frequency and voltage. If false, use the qubit spectrum.
group: Pulse #2
section: 1-QB gates Z-alt
state_quant: Uniform pulse shape, Z-alt
state_value: 0

[df/dV #2, Z-alt]
label: df/dV
datatype: DOUBLE
unit: Hz/V
def_value: 0.5E9
tooltip: Translating pulseshape from frequency space to voltage assuming a linear dependence
group: Pulse #2
section: 1-QB gates Z-alt
state_quant: Uniform pulse shape, Z-alt
state_value: 0

[f initial #2, Z-alt]
label: f initial
datatype: DOUBLE
unit: Hz
def_value: 1.0
state_quant: Uniform amplitude, Z-alt
state_value: False
group: Pulse #2
section: 1-QB gates Z-alt
show_in_measurement_dlg: True

[f final #2, Z-alt]
label: f final
datatype: DOUBLE
unit: Hz
def_value: 1.0
state_quant: Uniform amplitude, Z-alt
state_value: False
group: Pulse #2
section: 1-QB gates Z-alt
show_in_measurement_dlg: True

[Width #2 Left, Z-alt]
label: Width Left
datatype: DOUBLE
unit: s
def_value: 10E-9
group: Pulse #2
section: 1-QB gates Z-alt
state_quant: Uniform pulse shape, Z-alt
state_value: 0

[Width #2 Right, Z-alt]
label: Width Right
datatype: DOUBLE
unit: s
def_value: 10E-9
group: Pulse #2
section: 1-QB gates Z-alt
state_quant: Uniform pulse shape, Z-alt
state_value: 0

[Plateau #2, Z-alt]
label: Plateau
datatype: DOUBLE
unit: s
group: Pulse #2
section: 1-QB gates Z-alt
state_quant: Uniform pulse shape, Z-alt
state_value: 0

[Frequency #2, Z-alt]
label: Frequency
datatype: DOUBLE
unit: s
group: Pulse #2
section: 1-QB gates Z-alt
state_quant: Uniform pulse shape, Z-alt
state_value: 0

# Actual pulses
####################
[Assume linear dependence #3, Z-alt]
label: Assume linear dependence
datatype: BOOLEAN
def_value: True
tooltip: Assumes a linear dependence between frequency and voltage. If false, use the qubit spectrum.
group: Pulse #3
section: 1-QB gates Z-alt
state_quant: Uniform pulse shape, Z-alt
state_value: 0

[df/dV #3, Z-alt]
label: df/dV
datatype: DOUBLE
unit: Hz/V
def_value: 0.5E9
tooltip: Translating pulseshape from frequency space to voltage assuming a linear dependence
group: Pulse #3
section: 1-QB gates Z-alt
state_quant: Uniform pulse shape, Z-alt
state_value: 0

[f initial #3, Z-alt]
label: f initial
datatype: DOUBLE
unit: Hz
def_value: 1.0
state_quant: Uniform amplitude, Z-alt
state_value: False
group: Pulse #3
section: 1-QB gates Z-alt
show_in_measurement_dlg: True

[f final #3, Z-alt]
label: f final
datatype: DOUBLE
unit: Hz
def_value: 1.0
state_quant: Uniform amplitude, Z-alt
state_value: False
group: Pulse #3
section: 1-QB gates Z-alt
show_in_measurement_dlg: True

[Width #3 Left, Z-alt]
label: Width Left
datatype: DOUBLE
unit: s
def_value: 10E-9
group: Pulse #3
section: 1-QB gates Z-alt
state_quant: Uniform pulse shape, Z-alt
state_value: 0

[Width #3 Right, Z-alt]
label: Width Right
datatype: DOUBLE
unit: s
def_value: 10E-9
group: Pulse #3
section: 1-QB gates Z-alt
state_quant: Uniform pulse shape, Z-alt
state_value: 0

[Plateau #3, Z-alt]
label: Plateau
datatype: DOUBLE
unit: s
group: Pulse #3
section: 1-QB gates Z-alt
state_quant: Uniform pulse shape, Z-alt
state_value: 0

[Frequency #3, Z-alt]
label: Frequency
datatype: DOUBLE
unit: s
group: Pulse #3
section: 1-QB gates Z-alt
state_quant: Uniform pulse shape, Z-alt
state_value: 0

# Actual pulses
####################
[Assume linear dependence #4, Z-alt]
label: Assume linear dependence
datatype: BOOLEAN
def_value: True
tooltip: Assumes a linear dependence between frequency and voltage. If false, use the qubit spectrum.
group: Pulse #4
section: 1-QB gates Z-alt
state_quant: Uniform pulse shape, Z-alt
state_value: 0

[df/dV #4, Z-alt]
label: df/dV
datatype: DOUBLE
unit: Hz/V
def_value: 0.5E9
tooltip: Translating pulseshape from frequency space to voltage assuming a linear dependence
group: Pulse #4
section: 1-QB gates Z-alt
state_quant: Uniform pulse shape, Z-alt
state_value: 0

[f initial #4, Z-alt]
label: f initial
datatype: DOUBLE
unit: Hz
def_value: 1.0
state_quant: Uniform amplitude, Z-alt
state_value: False
group: Pulse #4
section: 1-QB gates Z-alt
show_in_measurement_dlg: True

[f final #4, Z-alt]
label: f final
datatype: DOUBLE
unit: Hz
def_value: 1.0
state_quant: Uniform amplitude, Z-alt
state_value: False
group: Pulse #4
section: 1-QB gates Z-alt
show_in_measurement_dlg: True

[Width #4 Left, Z-alt]
label: Width Left
datatype: DOUBLE
unit: s
def_value: 10E-9
group: Pulse #4
section: 1-QB gates Z-alt
state_quant: Uniform pulse shape, Z-alt
state_value: 0

[Width #4 Right, Z-alt]
label: Width Right
datatype: DOUBLE
unit: s
def_value: 10E-9
group: Pulse #4
section: 1-QB gates Z-alt
state_quant: Uniform pulse shape, Z-alt
state_value: 0

[Plateau #4, Z-alt]
label: Plateau
datatype: DOUBLE
unit: s
group: Pulse #4
section: 1-QB gates Z-alt
state_quant: Uniform pulse shape, Z-alt
state_value: 0

[Frequency #4, Z-alt]
label: Frequency
datatype: DOUBLE
unit: s
group: Pulse #4
section: 1-QB gates Z-alt
state_quant: Uniform pulse shape, Z-alt
state_value: 0

# Pulses
#######################
[Pulse type, Z-readout]
label: Pulse type
datatype: COMBO
combo_def_1: Gaussian
combo_def_2: Square
combo_def_3: Ramp
combo_def_4: Cosine
group: Pulse settings
section: 1-QB gates Z-readout

[Truncation range, Z-readout]
label: Truncation range
datatype: DOUBLE
def_value: 3
state_quant: Pulse type, Z-readout
state_value_1: Gaussian
group: Pulse settings
section: 1-QB gates Z-readout

[Start at zero, Z-readout]
label: Start at zero
datatype: BOOLEAN
def_value: 0
state_quant: Pulse type, Z-readout
state_value_1: Gaussian
group: Pulse settings
section: 1-QB gates Z-readout

[Uniform amplitude, Z-readout]
label: Uniform amplitude
datatype: BOOLEAN
def_value: False
group: Pulse settings
section: 1-QB gates Z-readout

[Amplitude, Z-readout]
label: Amplitude
datatype: DOUBLE
unit: V
def_value: 1.0
state_quant: Uniform amplitude, Z-readout
state_value: True
group: Pulse settings
section: 1-QB gates Z-readout
show_in_measurement_dlg: True

[Uniform pulse shape, Z-readout]
datatype: BOOLEAN
def_value: True
group: Pulse settings
section: 1-QB gates Z-readout

[Use Z-init parameters]
datatype: BOOLEAN
def_value: True
group: Pulse settings
section: 1-QB gates Z-readout

# Actual pulses
####################
[Assume linear dependence #1, Z-readout]
label: Assume linear dependence
datatype: BOOLEAN
def_value: True
tooltip: Assumes a linear dependence between frequency and voltage. If false, use the qubit spectrum.
group: Pulse #1
section: 1-QB gates Z-readout
state_quant: Uniform pulse shape, Z-readout
state_value: 0

[df/dV #1, Z-readout]
label: df/dV
datatype: DOUBLE
unit: Hz/V
def_value: 0.5E9
tooltip: Translating pulseshape from frequency space to voltage assuming a linear dependence
group: Pulse #1
section: 1-QB gates Z-readout
state_quant: Uniform pulse shape, Z-readout
state_value: 0

[f initial #1, Z-readout]
label: f initial
datatype: DOUBLE
unit: Hz
def_value: 1.0
state_quant: Uniform amplitude, Z-readout
state_value: False
group: Pulse #1
section: 1-QB gates Z-readout
show_in_measurement_dlg: True

[f final #1, Z-readout]
label: f final
datatype: DOUBLE
unit: Hz
def_value: 1.0
state_quant: Uniform amplitude, Z-readout
state_value: False
group: Pulse #1
section: 1-QB gates Z-readout
show_in_measurement_dlg: True

[Frequency #1, Z-readout]
label: Frequency
datatype: DOUBLE
unit: s
group: Pulse #1
section: 1-QB gates Z-readout
state_quant: Uniform pulse shape, Z-readout
state_value: 0

# Actual pulses
####################
[Assume linear dependence #2, Z-readout]
label: Assume linear dependence
datatype: BOOLEAN
def_value: True
tooltip: Assumes a linear dependence between frequency and voltage. If false, use the qubit spectrum.
group: Pulse #2
section: 1-QB gates Z-readout
state_quant: Uniform pulse shape, Z-readout
state_value: 0

[df/dV #2, Z-readout]
label: df/dV
datatype: DOUBLE
unit: Hz/V
def_value: 0.5E9
tooltip: Translating pulseshape from frequency space to voltage assuming a linear dependence
group: Pulse #2
section: 1-QB gates Z-readout
state_quant: Uniform pulse shape, Z-readout
state_value: 0

[f initial #2, Z-readout]
label: f initial
datatype: DOUBLE
unit: Hz
def_value: 1.0
state_quant: Uniform amplitude, Z-readout
state_value: False
group: Pulse #2
section: 1-QB gates Z-readout
show_in_measurement_dlg: True

[f final #2, Z-readout]
label: f final
datatype: DOUBLE
unit: Hz
def_value: 1.0
state_quant: Uniform amplitude, Z-readout
state_value: False
group: Pulse #2
section: 1-QB gates Z-readout
show_in_measurement_dlg: True

[Frequency #2, Z-readout]
label: Frequency
datatype: DOUBLE
unit: s
group: Pulse #2
section: 1-QB gates Z-readout
state_quant: Uniform pulse shape, Z-readout
state_value: 0

# Actual pulses
####################
[Assume linear dependence #3, Z-readout]
label: Assume linear dependence
datatype: BOOLEAN
def_value: True
tooltip: Assumes a linear dependence between frequency and voltage. If false, use the qubit spectrum.
group: Pulse #3
section: 1-QB gates Z-readout
state_quant: Uniform pulse shape, Z-readout
state_value: 0

[df/dV #3, Z-readout]
label: df/dV
datatype: DOUBLE
unit: Hz/V
def_value: 0.5E9
tooltip: Translating pulseshape from frequency space to voltage assuming a linear dependence
group: Pulse #3
section: 1-QB gates Z-readout
state_quant: Uniform pulse shape, Z-readout
state_value: 0

[f initial #3, Z-readout]
label: f initial
datatype: DOUBLE
unit: Hz
def_value: 1.0
state_quant: Uniform amplitude, Z-readout
state_value: False
group: Pulse #3
section: 1-QB gates Z-readout
show_in_measurement_dlg: True

[f final #3, Z-readout]
label: f final
datatype: DOUBLE
unit: Hz
def_value: 1.0
state_quant: Uniform amplitude, Z-readout
state_value: False
group: Pulse #3
section: 1-QB gates Z-readout
show_in_measurement_dlg: True

[Frequency #3, Z-readout]
label: Frequency
datatype: DOUBLE
unit: s
group: Pulse #3
section: 1-QB gates Z-readout
state_quant: Uniform pulse shape, Z-readout
state_value: 0

# Actual pulses
####################
[Assume linear dependence #4, Z-readout]
label: Assume linear dependence
datatype: BOOLEAN
def_value: True
tooltip: Assumes a linear dependence between frequency and voltage. If false, use the qubit spectrum.
group: Pulse #4
section: 1-QB gates Z-readout
state_quant: Uniform pulse shape, Z-readout
state_value: 0

[df/dV #4, Z-readout]
label: df/dV
datatype: DOUBLE
unit: Hz/V
def_value: 0.5E9
tooltip: Translating pulseshape from frequency space to voltage assuming a linear dependence
group: Pulse #4
section: 1-QB gates Z-readout
state_quant: Uniform pulse shape, Z-readout
state_value: 0

[f initial #4, Z-readout]
label: f initial
datatype: DOUBLE
unit: Hz
def_value: 1.0
state_quant: Uniform amplitude, Z-readout
state_value: False
group: Pulse #4
section: 1-QB gates Z-readout
show_in_measurement_dlg: True

[f final #4, Z-readout]
label: f final
datatype: DOUBLE
unit: Hz
def_value: 1.0
state_quant: Uniform amplitude, Z-readout
state_value: False
group: Pulse #4
section: 1-QB gates Z-readout
show_in_measurement_dlg: True

[Frequency #4, Z-readout]
label: Frequency
datatype: DOUBLE
unit: s
group: Pulse #4
section: 1-QB gates Z-readout
state_quant: Uniform pulse shape, Z-readout
state_value: 0

# Qubit spectra
[Ec #1]
datatype: DOUBLE
label: Ec
unit: Hz
def_value: 200E6
group: Qubit #1
section: QB spectra

[f01 max #1]
datatype: DOUBLE
label: f01 max
unit: Hz
def_value: 5E9
group: Qubit #1
section: QB spectra

[f01 min #1]
datatype: DOUBLE
label: f01 min
unit: Hz
def_value: 4E9
group: Qubit #1
section: QB spectra

[Vperiod #1]
datatype: DOUBLE
label: Voltage period
unit: V
def_value: 1
group: Qubit #1
section: QB spectra

[Voffset #1]
datatype: DOUBLE
label: Voltage offset
unit: V
def_value: 0
group: Qubit #1
section: QB spectra

[V0 #1]
datatype: DOUBLE
label: Voltage operating point
unit: V
def_value: 0
group: Qubit #1
section: QB spectra

[Ec #2]
datatype: DOUBLE
label: Ec
unit: Hz
def_value: 200E6
group: Qubit #2
section: QB spectra

[f01 max #2]
datatype: DOUBLE
label: f01 max
unit: Hz
def_value: 5E9
group: Qubit #2
section: QB spectra

[f01 min #2]
datatype: DOUBLE
label: f01 min
unit: Hz
def_value: 4E9
group: Qubit #2
section: QB spectra

[Vperiod #2]
datatype: DOUBLE
label: Voltage period
unit: V
def_value: 1
group: Qubit #2
section: QB spectra

[Voffset #2]
datatype: DOUBLE
label: Voltage offset
unit: V
def_value: 0
group: Qubit #2
section: QB spectra

[V0 #2]
datatype: DOUBLE
label: Voltage operating point
unit: V
def_value: 0
group: Qubit #2
section: QB spectra

[Ec #3]
datatype: DOUBLE
label: Ec
unit: Hz
def_value: 200E6
group: Qubit #3
section: QB spectra

[f01 max #3]
datatype: DOUBLE
label: f01 max
unit: Hz
def_value: 5E9
group: Qubit #3
section: QB spectra

[f01 min #3]
datatype: DOUBLE
label: f01 min
unit: Hz
def_value: 4E9
group: Qubit #3
section: QB spectra

[Vperiod #3]
datatype: DOUBLE
label: Voltage period
unit: V
def_value: 1
group: Qubit #3
section: QB spectra

[Voffset #3]
datatype: DOUBLE
label: Voltage offset
unit: V
def_value: 0
group: Qubit #3
section: QB spectra

[V0 #3]
datatype: DOUBLE
label: Voltage operating point
unit: V
def_value: 0
group: Qubit #3
section: QB spectra

[Ec #4]
datatype: DOUBLE
label: Ec
unit: Hz
def_value: 200E6
group: Qubit #4
section: QB spectra

[f01 max #4]
datatype: DOUBLE
label: f01 max
unit: Hz
def_value: 5E9
group: Qubit #4
section: QB spectra

[f01 min #4]
datatype: DOUBLE
label: f01 min
unit: Hz
def_value: 4E9
group: Qubit #4
section: QB spectra

[Vperiod #4]
datatype: DOUBLE
label: Voltage period
unit: V
def_value: 1
group: Qubit #4
section: QB spectra

[Voffset #4]
datatype: DOUBLE
label: Voltage offset
unit: V
def_value: 0
group: Qubit #4
section: QB spectra

[V0 #4]
datatype: DOUBLE
label: Voltage operating point
unit: V
def_value: 0
group: Qubit #4
section: QB spectra

[Ec #5]
datatype: DOUBLE
label: Ec
unit: Hz
def_value: 200E6
group: Qubit #5
section: QB spectra

[f01 max #5]
datatype: DOUBLE
label: f01 max
unit: Hz
def_value: 5E9
group: Qubit #5
section: QB spectra

[f01 min #5]
datatype: DOUBLE
label: f01 min
unit: Hz
def_value: 4E9
group: Qubit #5
section: QB spectra

[Vperiod #5]
datatype: DOUBLE
label: Voltage period
unit: V
def_value: 1
group: Qubit #5
section: QB spectra

[Voffset #5]
datatype: DOUBLE
label: Voltage offset
unit: V
def_value: 0
group: Qubit #5
section: QB spectra

[V0 #5]
datatype: DOUBLE
label: Voltage operating point
unit: V
def_value: 0
group: Qubit #5
section: QB spectra

[Ec #6]
datatype: DOUBLE
label: Ec
unit: Hz
def_value: 200E6
group: Qubit #6
section: QB spectra

[f01 max #6]
datatype: DOUBLE
label: f01 max
unit: Hz
def_value: 5E9
group: Qubit #6
section: QB spectra

[f01 min #6]
datatype: DOUBLE
label: f01 min
unit: Hz
def_value: 4E9
group: Qubit #6
section: QB spectra

[Vperiod #6]
datatype: DOUBLE
label: Voltage period
unit: V
def_value: 1
group: Qubit #6
section: QB spectra

[Voffset #6]
datatype: DOUBLE
label: Voltage offset
unit: V
def_value: 0
group: Qubit #6
section: QB spectra

[V0 #6]
datatype: DOUBLE
label: Voltage operating point
unit: V
def_value: 0
group: Qubit #6
section: QB spectra

[Ec #7]
datatype: DOUBLE
label: Ec
unit: Hz
def_value: 200E6
group: Qubit #7
section: QB spectra

[f01 max #7]
datatype: DOUBLE
label: f01 max
unit: Hz
def_value: 5E9
group: Qubit #7
section: QB spectra

[f01 min #7]
datatype: DOUBLE
label: f01 min
unit: Hz
def_value: 4E9
group: Qubit #7
section: QB spectra

[Vperiod #7]
datatype: DOUBLE
label: Voltage period
unit: V
def_value: 1
group: Qubit #7
section: QB spectra

[Voffset #7]
datatype: DOUBLE
label: Voltage offset
unit: V
def_value: 0
group: Qubit #7
section: QB spectra

[V0 #7]
datatype: DOUBLE
label: Voltage operating point
unit: V
def_value: 0
group: Qubit #7
section: QB spectra

[Ec #8]
datatype: DOUBLE
label: Ec
unit: Hz
def_value: 200E6
group: Qubit #8
section: QB spectra

[f01 max #8]
datatype: DOUBLE
label: f01 max
unit: Hz
def_value: 5E9
group: Qubit #8
section: QB spectra

[f01 min #8]
datatype: DOUBLE
label: f01 min
unit: Hz
def_value: 4E9
group: Qubit #8
section: QB spectra

[Vperiod #8]
datatype: DOUBLE
label: Voltage period
unit: V
def_value: 1
group: Qubit #8
section: QB spectra

[Voffset #8]
datatype: DOUBLE
label: Voltage offset
unit: V
def_value: 0
group: Qubit #8
section: QB spectra

[V0 #8]
datatype: DOUBLE
label: Voltage operating point
unit: V
def_value: 0
group: Qubit #8
section: QB spectra

[Ec #9]
datatype: DOUBLE
label: Ec
unit: Hz
def_value: 200E6
group: Qubit #9
section: QB spectra

[f01 max #9]
datatype: DOUBLE
label: f01 max
unit: Hz
def_value: 5E9
group: Qubit #9
section: QB spectra

[f01 min #9]
datatype: DOUBLE
label: f01 min
unit: Hz
def_value: 4E9
group: Qubit #9
section: QB spectra

[Vperiod #9]
datatype: DOUBLE
label: Voltage period
unit: V
def_value: 1
group: Qubit #9
section: QB spectra

[Voffset #9]
datatype: DOUBLE
label: Voltage offset
unit: V
def_value: 0
group: Qubit #9
section: QB spectra

[V0 #9]
datatype: DOUBLE
label: Voltage operating point
unit: V
def_value: 0
group: Qubit #9
section: QB spectra


# Pulses
#######################
[Pulse type, 2QB]
label: Pulse type
datatype: COMBO
combo_def_1: Gaussian
combo_def_2: Square
combo_def_3: Ramp
combo_def_4: CZ
combo_def_5: Cosine
def_value: CZ
group: 2-QB pulses
section: 2-QB gates

[Truncation range, 2QB]
label: Truncation range
datatype: DOUBLE
def_value: 3
state_quant: Pulse type, 2QB
state_value: Gaussian
group: 2-QB pulses
section: 2-QB gates

[Start at zero, 2QB]
label: Start at zero
datatype: BOOLEAN
def_value: 0
state_quant: Pulse type, 2QB
state_value: Gaussian
group: 2-QB pulses
section: 2-QB gates

[Uniform 2QB pulses]
datatype: BOOLEAN
def_value: True
group: 2-QB pulses
section: 2-QB gates

[Width, 2QB]
label: Width
datatype: DOUBLE
unit: s
def_value: 50E-9
group: 2-QB pulses
section: 2-QB gates
state_quant: Uniform 2QB pulses
state_value: 1
show_in_measurement_dlg: True

[Plateau, 2QB]
label: Plateau
datatype: DOUBLE
unit: s
group: 2-QB pulses
section: 2-QB gates
state_quant: Uniform 2QB pulses
state_value: 1
show_in_measurement_dlg: True

[Fourier terms, 2QB]
label: Fourier Terms
datatype: COMBO
combo_def_1: One
combo_def_2: Two
combo_def_3: Three
combo_def_4: Four
def_value: One
tooltip: Number of fourier terms used to define the pulseshape of the C-phase gate
group: 2-QB pulses
section: 2-QB gates
state_quant: Pulse type, 2QB
state_value: CZ

# Parameters #1
####################
[f initial, 2QB #1]
label: f initial
datatype: DOUBLE
unit: V
def_value: 1.0
group: 2-QB pulse #1
section: 2-QB gates
show_in_measurement_dlg: True

[f final, 2QB #1]
label: f final
datatype: DOUBLE
unit: V
def_value: 1.0
group: 2-QB pulse #1
section: 2-QB gates
show_in_measurement_dlg: True

[Width, 2QB #1]
label: Width
datatype: DOUBLE
unit: s
def_value: 50E-9
group: 2-QB pulse #1
section: 2-QB gates
state_quant: Uniform 2QB pulses
state_value: 0

[Plateau, 2QB #1]
label: Plateau
datatype: DOUBLE
unit: s
def_value: 0
group: 2-QB pulse #1
section: 2-QB gates
state_quant: Uniform 2QB pulses
state_value: 0

[Assume linear dependence #1]
label: Assume linear dependence
datatype: BOOLEAN
def_value: True
tooltip: Assumes a linear dependence between frequency and voltage. If false, use the qubit spectrum.
group: 2-QB pulse #1
section: 2-QB gates
#state_quant: Pulse type, 2QB
#state_value_1: CZ

[df/dV, 2QB #1]
label: df/dV
datatype: DOUBLE
unit: Hz/V
def_value: 0.5E9
tooltip: Translating pulseshape from frequency space to voltage assuming a linear dependence
group: 2-QB pulse #1
section: 2-QB gates
#state_quant: Pulse type, 2QB
#state_value_1: CZ

[Coupling, 2QB #1]
label: Coupling
datatype: DOUBLE
unit: Hz
def_value: 0.025E9
tooltip: Coupling strength between |11> state and |02> state
group: 2-QB pulse #1
section: 2-QB gates
state_quant: Pulse type, 2QB
state_value_1: CZ

[Offset, 2QB #1]
label: Offset
datatype: DOUBLE
unit: Hz
def_value: 0.300E9
group: 2-QB pulse #1
section: 2-QB gates
state_quant: Pulse type, 2QB
state_value_1: CZ

[L1, 2QB #1]
label: L1
datatype: DOUBLE
def_value: 1
tooltip: First fourier coefficient used to define the pulse shape of the C-phase gate.
group: 2-QB pulse #1
section: 2-QB gates
state_quant: Fourier terms, 2QB
state_value_1: One
state_value_2: Two
state_value_3: Three
state_value_4: Four

[L2, 2QB #1]
label: L2
datatype: DOUBLE
def_value: 0
group: 2-QB pulse #1
section: 2-QB gates
state_quant: Fourier terms, 2QB
state_value_1: Two
state_value_2: Three
state_value_3: Four

[L3, 2QB #1]
label: L3
datatype: DOUBLE
def_value: 0
group: 2-QB pulse #1
section: 2-QB gates
state_quant: Fourier terms, 2QB
state_value_1: Three
state_value_2: Four

[L4, 2QB #1]
label: L4
datatype: DOUBLE
def_value: 0
group: 2-QB pulse #1
section: 2-QB gates
state_quant: Fourier terms, 2QB
state_value_1: Four

[QB1 Phi 2QB #1]
label: QB1 Phase shift
datatype: DOUBLE
def_value: 0
group: 2-QB pulse #1
section: 2-QB gates

[QB2 Phi 2QB #1]
label: QB2 Phase shift
datatype: DOUBLE
def_value: 0
group: 2-QB pulse #1
section: 2-QB gates


# Parameters #2
####################
[f initial, 2QB #2]
label: f initial
datatype: DOUBLE
unit: V
def_value: 1.0
group: 2-QB pulse #2
section: 2-QB gates
show_in_measurement_dlg: True

[f final, 2QB #2]
label: f final
datatype: DOUBLE
unit: V
def_value: 1.0
group: 2-QB pulse #2
section: 2-QB gates
show_in_measurement_dlg: True

[Width, 2QB #2]
label: Width
datatype: DOUBLE
unit: s
def_value: 10E-9
group: 2-QB pulse #2
section: 2-QB gates
state_quant: Uniform 2QB pulses
state_value: 0

[Plateau, 2QB #2]
label: Plateau
datatype: DOUBLE
unit: s
group: 2-QB pulse #2
section: 2-QB gates
state_quant: Uniform 2QB pulses
state_value: 0

[Assume linear dependence #2]
label: Assume linear dependence
datatype: BOOLEAN
def_value: True
tooltip: Assumes a linear dependence between frequency and voltage. If false, use the qubit spectrum.
group: 2-QB pulse #2
section: 2-QB gates
#state_quant: Pulse type, 2QB
#state_value_1: CZ

[df/dV, 2QB #2]
label: df/dV
datatype: DOUBLE
unit: Hz/V
def_value: 0.5E9
group: 2-QB pulse #2
section: 2-QB gates
#state_quant: Pulse type, 2QB
#state_value_1: CZ

[Coupling, 2QB #2]
label: Coupling
datatype: DOUBLE
unit: Hz
def_value: 0.025E9
group: 2-QB pulse #2
section: 2-QB gates
state_quant: Pulse type, 2QB
state_value_1: CZ

[Offset, 2QB #2]
label: Offset
datatype: DOUBLE
unit: Hz
def_value: 0.300E9
group: 2-QB pulse #2
section: 2-QB gates
state_quant: Pulse type, 2QB
state_value_1: CZ

[L1, 2QB #2]
label: L1
datatype: DOUBLE
def_value: 1
group: 2-QB pulse #2
section: 2-QB gates
state_quant: Fourier terms, 2QB
state_value_1: One
state_value_2: Two
state_value_3: Three
state_value_4: Four

[L2, 2QB #2]
label: L2
datatype: DOUBLE
def_value: 0
group: 2-QB pulse #2
section: 2-QB gates
state_quant: Fourier terms, 2QB
state_value_1: Two
state_value_2: Three
state_value_3: Four

[L3, 2QB #2]
label: L3
datatype: DOUBLE
def_value: 0
group: 2-QB pulse #2
section: 2-QB gates
state_quant: Fourier terms, 2QB
state_value_1: Three
state_value_2: Four

[L4, 2QB #2]
label: L4
datatype: DOUBLE
def_value: 0
group: 2-QB pulse #2
section: 2-QB gates
state_quant: Fourier terms, 2QB
state_value_1: Four

# Parameters #3
####################
[f initial, 2QB #3]
label: f initial
datatype: DOUBLE
unit: V
def_value: 1.0
group: 2-QB pulse #3
section: 2-QB gates
show_in_measurement_dlg: True

[f final, 2QB #3]
label: f final
datatype: DOUBLE
unit: V
def_value: 1.0
group: 2-QB pulse #3
section: 2-QB gates
show_in_measurement_dlg: True

[Width, 2QB #3]
label: Width
datatype: DOUBLE
unit: s
def_value: 10E-9
group: 2-QB pulse #3
section: 2-QB gates
state_quant: Uniform 2QB pulses
state_value: 0

[Plateau, 2QB #3]
label: Plateau
datatype: DOUBLE
unit: s
group: 2-QB pulse #3
section: 2-QB gates
state_quant: Uniform 2QB pulses
state_value: 0

[Assume linear dependence #3]
label: Assume linear dependence
datatype: BOOLEAN
def_value: True
tooltip: Assumes a linear dependence between frequency and voltage. If false, use the qubit spectrum.
group: 2-QB pulse #3
section: 2-QB gates
state_quant: Pulse type, 2QB
state_value_1: CZ

[df/dV, 2QB #3]
label: df/dV
datatype: DOUBLE
unit: Hz/V
def_value: 0.5E9
group: 2-QB pulse #3
section: 2-QB gates
state_quant: Pulse type, 2QB
state_value_1: CZ

[Coupling, 2QB #3]
label: Coupling
datatype: DOUBLE
unit: Hz
def_value: 0.025E9
group: 2-QB pulse #3
section: 2-QB gates
state_quant: Pulse type, 2QB
state_value_1: CZ

[Offset, 2QB #3]
label: Offset
datatype: DOUBLE
unit: Hz
def_value: 0.300E9
group: 2-QB pulse #3
section: 2-QB gates
state_quant: Pulse type, 2QB
state_value_1: CZ

[L1, 2QB #3]
label: L1
datatype: DOUBLE
def_value: 1
group: 2-QB pulse #3
section: 2-QB gates
state_quant: Fourier terms, 2QB
state_value_1: One
state_value_2: Two
state_value_3: Three
state_value_4: Four

[L2, 2QB #3]
label: L2
datatype: DOUBLE
def_value: 0
group: 2-QB pulse #3
section: 2-QB gates
state_quant: Fourier terms, 2QB
state_value_1: Two
state_value_2: Three
state_value_3: Four

[L3, 2QB #3]
label: L3
datatype: DOUBLE
def_value: 0
group: 2-QB pulse #3
section: 2-QB gates
state_quant: Fourier terms, 2QB
state_value_1: Three
state_value_2: Four

[L4, 2QB #3]
label: L4
datatype: DOUBLE
def_value: 0
group: 2-QB pulse #3
section: 2-QB gates
state_quant: Fourier terms, 2QB
state_value_1: Four

# Parameters #4
####################
[f initial, 2QB #4]
label: f initial
datatype: DOUBLE
unit: V
def_value: 1.0
group: 2-QB pulse #4
section: 2-QB gates
show_in_measurement_dlg: True

[f final, 2QB #4]
label: f final
datatype: DOUBLE
unit: V
def_value: 1.0
group: 2-QB pulse #4
section: 2-QB gates
show_in_measurement_dlg: True

[Width, 2QB #4]
label: Width
datatype: DOUBLE
unit: s
def_value: 10E-9
group: 2-QB pulse #4
section: 2-QB gates
state_quant: Uniform 2QB pulses
state_value: 0

[Plateau, 2QB #4]
label: Plateau
datatype: DOUBLE
unit: s
group: 2-QB pulse #4
section: 2-QB gates
state_quant: Uniform 2QB pulses
state_value: 0

[Assume linear dependence #4]
label: Assume linear dependence
datatype: BOOLEAN
def_value: True
tooltip: Assumes a linear dependence between frequency and voltage. If false, use the qubit spectrum.
group: 2-QB pulse #4
section: 2-QB gates
state_quant: Pulse type, 2QB
state_value_1: CZ

[df/dV, 2QB #4]
label: df/dV
datatype: DOUBLE
unit: Hz/V
def_value: 0.5E9
group: 2-QB pulse #4
section: 2-QB gates
state_quant: Pulse type, 2QB
state_value_1: CZ

[Coupling, 2QB #4]
label: Coupling
datatype: DOUBLE
unit: Hz
def_value: 0.025E9
group: 2-QB pulse #4
section: 2-QB gates
state_quant: Pulse type, 2QB
state_value_1: CZ

[Offset, 2QB #4]
label: Offset
datatype: DOUBLE
unit: Hz
def_value: 0.300E9
group: 2-QB pulse #4
section: 2-QB gates
state_quant: Pulse type, 2QB
state_value_1: CZ

[L1, 2QB #4]
label: L1
datatype: DOUBLE
def_value: 1
group: 2-QB pulse #4
section: 2-QB gates
state_quant: Fourier terms, 2QB
state_value_1: One
state_value_2: Two
state_value_3: Three
state_value_4: Four

[L2, 2QB #4]
label: L2
datatype: DOUBLE
def_value: 0
group: 2-QB pulse #4
section: 2-QB gates
state_quant: Fourier terms, 2QB
state_value_1: Two
state_value_2: Three
state_value_3: Four

[L3, 2QB #4]
label: L3
datatype: DOUBLE
def_value: 0
group: 2-QB pulse #4
section: 2-QB gates
state_quant: Fourier terms, 2QB
state_value_1: Three
state_value_2: Four

[L4, 2QB #4]
label: L4
datatype: DOUBLE
def_value: 0
group: 2-QB pulse #4
section: 2-QB gates
state_quant: Fourier terms, 2QB
state_value_1: Four

# Parameters #56
####################
[Amplitude, 2QB #56]
label: Amplitude
datatype: DOUBLE
unit: V
def_value: 1.0
group: 2-QB pulse #56
section: 2-QB gates
state_quant: Pulse type, 2QB
state_value_1: Gaussian
state_value_2: Square
state_value_3: Ramp
state_value_4: Cosine
show_in_measurement_dlg: True

[Width, 2QB #56]
label: Width
datatype: DOUBLE
unit: s
def_value: 10E-9
group: 2-QB pulse #56
section: 2-QB gates
state_quant: Uniform 2QB pulses
state_value: 0

[Plateau, 2QB #56]
label: Plateau
datatype: DOUBLE
unit: s
group: 2-QB pulse #56
section: 2-QB gates
state_quant: Uniform 2QB pulses
state_value: 0

[Assume linear dependence #56]
label: Assume linear dependence
datatype: BOOLEAN
def_value: True
tooltip: Assumes a linear dependence between frequency and voltage. If false, use the qubit spectrum.
group: 2-QB pulse #56
section: 2-QB gates
state_quant: Pulse type, 2QB
state_value_1: CZ

[df/dV, 2QB #56]
label: df/dV
datatype: DOUBLE
unit: Hz/V
def_value: 0.5E9
group: 2-QB pulse #56
section: 2-QB gates
state_quant: Pulse type, 2QB
state_value_1: CZ

[f11-f20 initial, 2QB #56]
label: f11-f20 initial
datatype: DOUBLE
unit: Hz
def_value: 0.3E9
group: 2-QB pulse #56
section: 2-QB gates
state_quant: Pulse type, 2QB
state_value_1: CZ

[f11-f20 final, 2QB #56]
label: f11-f20 final
datatype: DOUBLE
unit: Hz
def_value: 0.05E9
group: 2-QB pulse #56
section: 2-QB gates
state_quant: Pulse type, 2QB
state_value_1: CZ

[Coupling, 2QB #56]
label: Coupling
datatype: DOUBLE
unit: Hz
def_value: 0.025E9
group: 2-QB pulse #56
section: 2-QB gates
state_quant: Pulse type, 2QB
state_value_1: CZ

[L1, 2QB #56]
label: L1
datatype: DOUBLE
def_value: 1
group: 2-QB pulse #56
section: 2-QB gates
state_quant: Fourier terms, 2QB
state_value_1: One
state_value_2: Two
state_value_3: Three
state_value_4: Four

[L2, 2QB #56]
label: L2
datatype: DOUBLE
def_value: 0
group: 2-QB pulse #56
section: 2-QB gates
state_quant: Fourier terms, 2QB
state_value_1: Two
state_value_2: Three
state_value_3: Four

[L3, 2QB #56]
label: L3
datatype: DOUBLE
def_value: 0
group: 2-QB pulse #56
section: 2-QB gates
state_quant: Fourier terms, 2QB
state_value_1: Three
state_value_2: Four

[L4, 2QB #56]
label: L4
datatype: DOUBLE
def_value: 0
group: 2-QB pulse #56
section: 2-QB gates
state_quant: Fourier terms, 2QB
state_value_1: Four

# Parameters #67
####################
[Amplitude, 2QB #67]
label: Amplitude
datatype: DOUBLE
unit: V
def_value: 1.0
group: 2-QB pulse #67
section: 2-QB gates
state_quant: Pulse type, 2QB
state_value_1: Gaussian
state_value_2: Square
state_value_3: Ramp
state_value_4: Cosine
show_in_measurement_dlg: True

[Width, 2QB #67]
label: Width
datatype: DOUBLE
unit: s
def_value: 10E-9
group: 2-QB pulse #67
section: 2-QB gates
state_quant: Uniform 2QB pulses
state_value: 0

[Plateau, 2QB #67]
label: Plateau
datatype: DOUBLE
unit: s
group: 2-QB pulse #67
section: 2-QB gates
state_quant: Uniform 2QB pulses
state_value: 0

[Assume linear dependence #67]
label: Assume linear dependence
datatype: BOOLEAN
def_value: True
tooltip: Assumes a linear dependence between frequency and voltage. If false, use the qubit spectrum.
group: 2-QB pulse #67
section: 2-QB gates
state_quant: Pulse type, 2QB
state_value_1: CZ

[df/dV, 2QB #67]
label: df/dV
datatype: DOUBLE
unit: Hz/V
def_value: 0.5E9
group: 2-QB pulse #67
section: 2-QB gates
state_quant: Pulse type, 2QB
state_value_1: CZ

[f11-f20 initial, 2QB #67]
label: f11-f20 initial
datatype: DOUBLE
unit: Hz
def_value: 0.3E9
group: 2-QB pulse #67
section: 2-QB gates
state_quant: Pulse type, 2QB
state_value_1: CZ

[f11-f20 final, 2QB #67]
label: f11-f20 final
datatype: DOUBLE
unit: Hz
def_value: 0.05E9
group: 2-QB pulse #67
section: 2-QB gates
state_quant: Pulse type, 2QB
state_value_1: CZ

[Coupling, 2QB #67]
label: Coupling
datatype: DOUBLE
unit: Hz
def_value: 0.025E9
group: 2-QB pulse #67
section: 2-QB gates
state_quant: Pulse type, 2QB
state_value_1: CZ

[L1, 2QB #67]
label: L1
datatype: DOUBLE
def_value: 1
group: 2-QB pulse #67
section: 2-QB gates
state_quant: Fourier terms, 2QB
state_value_1: One
state_value_2: Two
state_value_3: Three
state_value_4: Four

[L2, 2QB #67]
label: L2
datatype: DOUBLE
def_value: 0
group: 2-QB pulse #67
section: 2-QB gates
state_quant: Fourier terms, 2QB
state_value_1: Two
state_value_2: Three
state_value_3: Four

[L3, 2QB #67]
label: L3
datatype: DOUBLE
def_value: 0
group: 2-QB pulse #67
section: 2-QB gates
state_quant: Fourier terms, 2QB
state_value_1: Three
state_value_2: Four

[L4, 2QB #67]
label: L4
datatype: DOUBLE
def_value: 0
group: 2-QB pulse #67
section: 2-QB gates
state_quant: Fourier terms, 2QB
state_value_1: Four

# Parameters #78
####################
[Amplitude, 2QB #78]
label: Amplitude
datatype: DOUBLE
unit: V
def_value: 1.0
group: 2-QB pulse #78
section: 2-QB gates
state_quant: Pulse type, 2QB
state_value_1: Gaussian
state_value_2: Square
state_value_3: Ramp
state_value_4: Cosine
show_in_measurement_dlg: True

[Width, 2QB #78]
label: Width
datatype: DOUBLE
unit: s
def_value: 10E-9
group: 2-QB pulse #78
section: 2-QB gates
state_quant: Uniform 2QB pulses
state_value: 0

[Plateau, 2QB #78]
label: Plateau
datatype: DOUBLE
unit: s
group: 2-QB pulse #78
section: 2-QB gates
state_quant: Uniform 2QB pulses
state_value: 0

[Assume linear dependence #78]
label: Assume linear dependence
datatype: BOOLEAN
def_value: True
tooltip: Assumes a linear dependence between frequency and voltage. If false, use the qubit spectrum.
group: 2-QB pulse #78
section: 2-QB gates
state_quant: Pulse type, 2QB
state_value_1: CZ

[df/dV, 2QB #78]
label: df/dV
datatype: DOUBLE
unit: Hz/V
def_value: 0.5E9
group: 2-QB pulse #78
section: 2-QB gates
state_quant: Pulse type, 2QB
state_value_1: CZ

[f11-f20 initial, 2QB #78]
label: f11-f20 initial
datatype: DOUBLE
unit: Hz
def_value: 0.3E9
group: 2-QB pulse #78
section: 2-QB gates
state_quant: Pulse type, 2QB
state_value_1: CZ

[f11-f20 final, 2QB #78]
label: f11-f20 final
datatype: DOUBLE
unit: Hz
def_value: 0.05E9
group: 2-QB pulse #78
section: 2-QB gates
state_quant: Pulse type, 2QB
state_value_1: CZ

[Coupling, 2QB #78]
label: Coupling
datatype: DOUBLE
unit: Hz
def_value: 0.025E9
group: 2-QB pulse #78
section: 2-QB gates
state_quant: Pulse type, 2QB
state_value_1: CZ

[L1, 2QB #78]
label: L1
datatype: DOUBLE
def_value: 1
group: 2-QB pulse #78
section: 2-QB gates
state_quant: Fourier terms, 2QB
state_value_1: One
state_value_2: Two
state_value_3: Three
state_value_4: Four

[L2, 2QB #78]
label: L2
datatype: DOUBLE
def_value: 0
group: 2-QB pulse #78
section: 2-QB gates
state_quant: Fourier terms, 2QB
state_value_1: Two
state_value_2: Three
state_value_3: Four

[L3, 2QB #78]
label: L3
datatype: DOUBLE
def_value: 0
group: 2-QB pulse #78
section: 2-QB gates
state_quant: Fourier terms, 2QB
state_value_1: Three
state_value_2: Four

[L4, 2QB #78]
label: L4
datatype: DOUBLE
def_value: 0
group: 2-QB pulse #78
section: 2-QB gates
state_quant: Fourier terms, 2QB
state_value_1: Four

# Parameters #89
####################
[Amplitude, 2QB #89]
label: Amplitude
datatype: DOUBLE
unit: V
def_value: 1.0
group: 2-QB pulse #89
section: 2-QB gates
state_quant: Pulse type, 2QB
state_value_1: Gaussian
state_value_2: Square
state_value_3: Ramp
state_value_4: Cosine
show_in_measurement_dlg: True

[Width, 2QB #89]
label: Width
datatype: DOUBLE
unit: s
def_value: 10E-9
group: 2-QB pulse #89
section: 2-QB gates
state_quant: Uniform 2QB pulses
state_value: 0

[Plateau, 2QB #89]
label: Plateau
datatype: DOUBLE
unit: s
group: 2-QB pulse #89
section: 2-QB gates
state_quant: Uniform 2QB pulses
state_value: 0

[Assume linear dependence #89]
label: Assume linear dependence
datatype: BOOLEAN
def_value: True
tooltip: Assumes a linear dependence between frequency and voltage. If false, use the qubit spectrum.
group: 2-QB pulse #89
section: 2-QB gates
state_quant: Pulse type, 2QB
state_value_1: CZ

[df/dV, 2QB #89]
label: df/dV
datatype: DOUBLE
unit: Hz/V
def_value: 0.5E9
group: 2-QB pulse #89
section: 2-QB gates
state_quant: Pulse type, 2QB
state_value_1: CZ

[f11-f20 initial, 2QB #89]
label: f11-f20 initial
datatype: DOUBLE
unit: Hz
def_value: 0.3E9
group: 2-QB pulse #89
section: 2-QB gates
state_quant: Pulse type, 2QB
state_value_1: CZ

[f11-f20 final, 2QB #89]
label: f11-f20 final
datatype: DOUBLE
unit: Hz
def_value: 0.05E9
group: 2-QB pulse #89
section: 2-QB gates
state_quant: Pulse type, 2QB
state_value_1: CZ

[Coupling, 2QB #89]
label: Coupling
datatype: DOUBLE
unit: Hz
def_value: 0.025E9
group: 2-QB pulse #89
section: 2-QB gates
state_quant: Pulse type, 2QB
state_value_1: CZ

[L1, 2QB #89]
label: L1
datatype: DOUBLE
def_value: 1
group: 2-QB pulse #89
section: 2-QB gates
state_quant: Fourier terms, 2QB
state_value_1: One
state_value_2: Two
state_value_3: Three
state_value_4: Four

[L2, 2QB #89]
label: L2
datatype: DOUBLE
def_value: 0
group: 2-QB pulse #89
section: 2-QB gates
state_quant: Fourier terms, 2QB
state_value_1: Two
state_value_2: Three
state_value_3: Four

[L3, 2QB #89]
label: L3
datatype: DOUBLE
def_value: 0
group: 2-QB pulse #89
section: 2-QB gates
state_quant: Fourier terms, 2QB
state_value_1: Three
state_value_2: Four

[L4, 2QB #89]
label: L4
datatype: DOUBLE
def_value: 0
group: 2-QB pulse #89
section: 2-QB gates
state_quant: Fourier terms, 2QB
state_value_1: Four


# Tomography setup
#######################
[Generate process tomography prepulse]
datatype: BOOLEAN
def_value: 0
group: Tomography
section: Tomography

[Generate state tomography postpulse]
datatype: BOOLEAN
def_value: 0
group: Tomography
section: Tomography

[Tomography scheme]
label: Tomography scheme
datatype: COMBO
def_value: Single qubit
combo_def_1: Single qubit
combo_def_2: Two qubit (9 pulse set)
combo_def_3: Two qubit (30 pulse set)
combo_def_4: Two qubit (36 pulse set)
group: State tomography setup
section: Tomography

[Process tomography prepulse index 1-QB]
label: Prepulse index 1-QB
datatype: COMBO
def_value: 0: I
combo_def_1: 0: I
combo_def_2: 1: Xp
combo_def_3: X: Y2p
combo_def_4: Y: X2m
group: State tomography setup
section: Tomography
show_in_measurement_dlg: True
state_quant: Tomography scheme
state_value: Single qubit

[Process tomography prepulse index 2-QB]
label: Prepulse index 2-QB
datatype: COMBO
def_value: 00: I-I
combo_def_1: 00: I-I
combo_def_2: 01: I-Xp
combo_def_3: 0X: I-Y2p
combo_def_4: 0Y: I-X2m
combo_def_5: 10: Xp-I
combo_def_6: 11: Xp-Xp
combo_def_7: 1X: Xp-Y2p
combo_def_8: 1Y: Xp-X2m
combo_def_9: X0: Y2p-I
combo_def_10: X1: Y2p-Xp
combo_def_11: XX: Y2p-Y2p
combo_def_12: XY: Y2p-X2m
combo_def_13: Y0: X2m-I
combo_def_14: Y1: X2m-Xp
combo_def_15: YX: X2m-Y2p
combo_def_16: YY: X2m-X2m
group: State tomography setup
section: Tomography
show_in_measurement_dlg: True
state_quant: Tomography scheme
state_value_1: Two qubit (9 pulse set)
state_value_2: Two qubit (30 pulse set)
state_value_3: Two qubit (36 pulse set)

[Tomography pulse index 1-QB]
label: Postpulse index 1-QB
datatype: COMBO
def_value: Z: I
combo_def_1: Z: I
combo_def_2: Y: X2p
combo_def_3: X: Y2m
group: State tomography setup
section: Tomography
show_in_measurement_dlg: True
state_quant: Tomography scheme
state_value_1: Single qubit

[Tomography pulse index 2-QB (9 pulse set)]
label: Postpulse index 2-QB
datatype: COMBO
def_value: XX: Y2m-Y2m
combo_def_1: XX: Y2m-Y2m
combo_def_2: YX: X2p-Y2m
combo_def_3: ZX: I-Y2m
combo_def_4: XY: Y2m-X2p
combo_def_5: YY: X2p-X2p
combo_def_6: ZY: I-X2p
combo_def_7: XZ: Y2m-I
combo_def_8: YZ: X2p-I
combo_def_9: ZZ: I-I
group: State tomography setup
section: Tomography
show_in_measurement_dlg: True
state_quant: Tomography scheme
state_value: Two qubit (9 pulse set)

[Tomography pulse index 2-QB (30 pulse set)]
label: Postpulse index 2-QB
datatype: COMBO
def_value: I-I
combo_def_1: I-I
combo_def_2: Xp-I
combo_def_3: I-Xp
combo_def_4: X2p-I
combo_def_5: X2p-X2p
combo_def_6: X2p-Y2p
combo_def_7: X2p-Xp
combo_def_8: Y2p-I
combo_def_9: Y2p-X2p
combo_def_10: Y2p-Y2p
combo_def_11: Y2p-Xp
combo_def_12: I-X2p
combo_def_13: Xp-X2p
combo_def_14: I-Y2p
combo_def_15: Xp-Y2p
combo_def_16: I-I
combo_def_17: Xm-I
combo_def_18: I-Xm
combo_def_19: X2m-I
combo_def_20: X2m-X2m
combo_def_21: X2m-Y2m
combo_def_22: X2m-Xm
combo_def_23: Y2m-I
combo_def_24: Y2m-X2m
combo_def_25: Y2m-Y2m
combo_def_26: Y2m-Xm
combo_def_27: I-X2m
combo_def_28: Xm-X2m
combo_def_29: I-Y2m
combo_def_30: Xm-Y2m
group: State tomography setup
section: Tomography
show_in_measurement_dlg: True
state_quant: Tomography scheme
state_value: Two qubit (30 pulse set)

[Tomography pulse index 2-QB (36 pulse set)]
label: Postpulse index 2-QB
datatype: COMBO
def_value: I-I
combo_def_1: I-I
combo_def_2: Xp-I
combo_def_3: X2p-I
combo_def_4: X2m-I
combo_def_5: Y2p-I
combo_def_6: Y2m-I
combo_def_7: Id-Xp
combo_def_8: Xp-Xp
combo_def_9: X2p-Xp
combo_def_10: X2m-Xp
combo_def_11: Y2p-Xp
combo_def_12: Y2m-Xp
combo_def_13: I-X2p
combo_def_14: Xp-X2p
combo_def_15: X2p-X2p
combo_def_16: X2m-X2p
combo_def_17: Y2p-Y2p
combo_def_18: Y2m-Y2p
combo_def_19: I-X2m
combo_def_20: Xp-X2m
combo_def_21: X2p-X2m
combo_def_22: X2m-X2m
combo_def_23: Y2p-X2m
combo_def_24: Y2m-X2m
combo_def_25: I-Y2p
combo_def_26: Xp-Y2p
combo_def_27: X2p-Y2p
combo_def_28: X2m-Y2p
combo_def_29: Y2p-Y2p
combo_def_30: Y2m-Y2p
combo_def_31: I-Y2m
combo_def_32: Xp-Y2m
combo_def_33: X2p-Y2m
combo_def_34: X2m-Y2m
combo_def_35: Y2p-Y2m
combo_def_36: Y2m-Y2m
group: State tomography setup
section: Tomography
show_in_measurement_dlg: True
state_quant: Tomography scheme
state_value: Two qubit (36 pulse set)

[Qubit for tomography]
label: Qubit #
datatype: COMBO
def_value: One
combo_def_1: One
combo_def_2: Two
combo_def_3: Three
combo_def_4: Four
combo_def_5: Five
combo_def_6: Six
combo_def_7: Seven
combo_def_8: Eight
combo_def_9: Nine
state_quant: Tomography scheme
state_value: Single qubit
group: Qubits for tomography
section: Tomography

[Qubit 1 # tomography]
label: Qubit 1 waveform #
datatype: COMBO
def_value: One
combo_def_1: One
combo_def_2: Two
combo_def_3: Three
combo_def_4: Four
combo_def_5: Five
combo_def_6: Six
combo_def_7: Seven
combo_def_8: Eight
combo_def_9: Nine
state_quant: Tomography scheme
state_value_1: Two qubit (9 pulse set)
state_value_2: Two qubit (30 pulse set)
state_value_3: Two qubit (36 pulse set)
group: Qubits for tomography
section: Tomography

[Qubit 2 # tomography]
label: Qubit 2 waveform #
datatype: COMBO
def_value: Two
combo_def_1: One
combo_def_2: Two
combo_def_3: Three
combo_def_4: Four
combo_def_5: Five
combo_def_6: Six
combo_def_7: Seven
combo_def_8: Eight
combo_def_9: Nine
state_quant: Tomography scheme
state_value_1: Two qubit (9 pulse set)
state_value_2: Two qubit (30 pulse set)
state_value_3: Two qubit (36 pulse set)
group: Qubits for tomography
section: Tomography


# Predistortion
#######################
[Predistort waveforms]
datatype: BOOLEAN
def_value: 0
group: XY Predistortion
section: Predistortion

[Transfer function #1]
datatype: PATH
group: XY Predistortion
section: Predistortion

[Transfer function #2]
datatype: PATH
group: XY Predistortion
section: Predistortion

[Transfer function #3]
datatype: PATH
group: XY Predistortion
section: Predistortion

[Transfer function #4]
datatype: PATH
group: XY Predistortion
section: Predistortion

[Transfer function #5]
datatype: PATH
group: XY Predistortion
section: Predistortion

[Transfer function #6]
datatype: PATH
group: XY Predistortion
section: Predistortion

[Transfer function #7]
datatype: PATH
group: XY Predistortion
section: Predistortion

[Transfer function #8]
datatype: PATH
group: XY Predistortion
section: Predistortion

[Transfer function #9]
datatype: PATH
group: XY Predistortion
section: Predistortion

[Predistort Z]
datatype: BOOLEAN
def_value: 0
group: Z predistorion
section: Predistortion

[Transfer function Z #1]
datatype: PATH
group: XY Predistortion
section: Predistortion

[Transfer function Z #2]
datatype: PATH
group: XY Predistortion
section: Predistortion

[Transfer function Z #3]
datatype: PATH
group: XY Predistortion
section: Predistortion

[Transfer function Z #4]
datatype: PATH
group: XY Predistortion
section: Predistortion

[Transfer function Z #5]
datatype: PATH
group: XY Predistortion
section: Predistortion

[Transfer function Z #6]
datatype: PATH
group: XY Predistortion
section: Predistortion

[Transfer function Z #7]
datatype: PATH
group: XY Predistortion
section: Predistortion

[Transfer function Z #8]
datatype: PATH
group: XY Predistortion
section: Predistortion

[Transfer function Z #9]
datatype: PATH
group: XY Predistortion
section: Predistortion

[Predistort Z1 - A1]
label: A1
datatype: DOUBLE
group: Z1
section: Predistortion

[Predistort Z1 - tau1]
label: tau1
datatype: DOUBLE
group: Z1
section: Predistortion

[Predistort Z1 - A2]
label: A2
datatype: DOUBLE
group: Z1
section: Predistortion

[Predistort Z1 - tau2]
label: tau2
datatype: DOUBLE
group: Z1
section: Predistortion

[Predistort Z1 - A3]
label: A3
datatype: DOUBLE
group: Z1
section: Predistortion

[Predistort Z1 - tau3]
label: tau3
datatype: DOUBLE
group: Z1
section: Predistortion

[Predistort Z2 - A1]
label: A1
datatype: DOUBLE
group: Z2
section: Predistortion

[Predistort Z2 - tau1]
label: tau1
datatype: DOUBLE
group: Z2
section: Predistortion

[Predistort Z2 - A2]
label: A2
datatype: DOUBLE
group: Z2
section: Predistortion

[Predistort Z2 - tau2]
label: tau2
datatype: DOUBLE
group: Z2
section: Predistortion

[Predistort Z2 - A3]
label: A3
datatype: DOUBLE
group: Z2
section: Predistortion

[Predistort Z2 - tau3]
label: tau3
datatype: DOUBLE
group: Z2
section: Predistortion

[Predistort Z3 - A1]
label: A1
datatype: DOUBLE
group: Z3
section: Predistortion

[Predistort Z3 - tau1]
label: tau1
datatype: DOUBLE
group: Z3
section: Predistortion

[Predistort Z3 - A2]
label: A2
datatype: DOUBLE
group: Z3
section: Predistortion

[Predistort Z3 - tau2]
label: tau2
datatype: DOUBLE
group: Z3
section: Predistortion

[Predistort Z3 - A3]
label: A3
datatype: DOUBLE
group: Z3
section: Predistortion

[Predistort Z3 - tau3]
label: tau3
datatype: DOUBLE
group: Z3
section: Predistortion

[Predistort Z4 - A1]
label: A1
datatype: DOUBLE
group: Z4
section: Predistortion

[Predistort Z4 - tau1]
label: tau1
datatype: DOUBLE
group: Z4
section: Predistortion

[Predistort Z4 - A2]
label: A2
datatype: DOUBLE
group: Z4
section: Predistortion

[Predistort Z4 - tau2]
label: tau2
datatype: DOUBLE
group: Z4
section: Predistortion

[Predistort Z4 - A3]
label: A3
datatype: DOUBLE
group: Z4
section: Predistortion

[Predistort Z4 - tau3]
label: tau3
datatype: DOUBLE
group: Z4
section: Predistortion

[Predistort Z5 - A1]
label: A1
datatype: DOUBLE
group: Z5
section: Predistortion

[Predistort Z5 - tau1]
label: tau1
datatype: DOUBLE
group: Z5
section: Predistortion

[Predistort Z5 - A2]
label: A2
datatype: DOUBLE
group: Z5
section: Predistortion

[Predistort Z5 - tau2]
label: tau2
datatype: DOUBLE
group: Z5
section: Predistortion

[Predistort Z5 - A3]
label: A3
datatype: DOUBLE
group: Z5
section: Predistortion

[Predistort Z5 - tau3]
label: tau3
datatype: DOUBLE
group: Z5
section: Predistortion

[Predistort Z6 - A1]
label: A1
datatype: DOUBLE
group: Z6
section: Predistortion

[Predistort Z6 - tau1]
label: tau1
datatype: DOUBLE
group: Z6
section: Predistortion

[Predistort Z6 - A2]
label: A2
datatype: DOUBLE
group: Z6
section: Predistortion

[Predistort Z6 - tau2]
label: tau2
datatype: DOUBLE
group: Z6
section: Predistortion

[Predistort Z6 - A3]
label: A3
datatype: DOUBLE
group: Z6
section: Predistortion

[Predistort Z6 - tau3]
label: tau3
datatype: DOUBLE
group: Z6
section: Predistortion

[Predistort Z7 - A1]
label: A1
datatype: DOUBLE
group: Z7
section: Predistortion

[Predistort Z7 - tau1]
label: tau1
datatype: DOUBLE
group: Z7
section: Predistortion

[Predistort Z7 - A2]
label: A2
datatype: DOUBLE
group: Z7
section: Predistortion

[Predistort Z7 - tau2]
label: tau2
datatype: DOUBLE
group: Z7
section: Predistortion

[Predistort Z7 - A3]
label: A3
datatype: DOUBLE
group: Z7
section: Predistortion

[Predistort Z7 - tau3]
label: tau3
datatype: DOUBLE
group: Z7
section: Predistortion

[Predistort Z8 - A1]
label: A1
datatype: DOUBLE
group: Z8
section: Predistortion

[Predistort Z8 - tau1]
label: tau1
datatype: DOUBLE
group: Z8
section: Predistortion

[Predistort Z8 - A2]
label: A2
datatype: DOUBLE
group: Z8
section: Predistortion

[Predistort Z8 - tau2]
label: tau2
datatype: DOUBLE
group: Z8
section: Predistortion

[Predistort Z8 - A3]
label: A3
datatype: DOUBLE
group: Z8
section: Predistortion

[Predistort Z8 - tau3]
label: tau3
datatype: DOUBLE
group: Z8
section: Predistortion

[Predistort Z9 - A1]
label: A1
datatype: DOUBLE
group: Z9
section: Predistortion

[Predistort Z9 - tau1]
label: tau1
datatype: DOUBLE
group: Z9
section: Predistortion

[Predistort Z9 - A2]
label: A2
datatype: DOUBLE
group: Z9
section: Predistortion

[Predistort Z9 - tau2]
label: tau2
datatype: DOUBLE
group: Z9
section: Predistortion

[Predistort Z9 - A3]
label: A3
datatype: DOUBLE
group: Z9
section: Predistortion

[Predistort Z9 - tau3]
label: tau3
datatype: DOUBLE
group: Z9
section: Predistortion

# Cross-talk
#######################
[Compensate cross-talk]
datatype: BOOLEAN
def_value: 0
group: Cross-talk
section: Cross-talk

[Cross-talk (CT) matrix]
datatype: PATH
group: Cross-talk
section: Cross-talk

[1-1 QB <--> Crosstalk matrix]
tooltip: One-to-one QB to Cross-talk matrix element correspondence
datatype: BOOLEAN
def_value: True
group: Cross-talk
section: Cross-talk

[CT-matrix element #1]
tooltip: Which QB/output corresponds to which element of the cross-talk matrix
datatype: COMBO
def_value: None
combo_def_1: One
combo_def_2: Two
combo_def_3: Three
combo_def_4: Four
combo_def_5: Five
combo_def_6: Six
combo_def_7: Seven
combo_def_8: Eight
combo_def_9: Nine
combo_def_10: None
group: Cross-talk
section: Cross-talk

[CT-matrix element #2]
datatype: COMBO
def_value: None
combo_def_1: One
combo_def_2: Two
combo_def_3: Three
combo_def_4: Four
combo_def_5: Five
combo_def_6: Six
combo_def_7: Seven
combo_def_8: Eight
combo_def_9: Nine
combo_def_10: None
group: Cross-talk
section: Cross-talk
state_quant: Number of qubits
state_value_1: Five
state_value_2: Four
state_value_3: Three
state_value_4: Two

[CT-matrix element #3]
datatype: COMBO
def_value: None
combo_def_1: One
combo_def_2: Two
combo_def_3: Three
combo_def_4: Four
combo_def_5: Five
combo_def_6: Six
combo_def_7: Seven
combo_def_8: Eight
combo_def_9: Nine
combo_def_10: None
group: Cross-talk
section: Cross-talk
state_quant: Number of qubits
state_value_1: Five
state_value_2: Four
state_value_3: Three

[CT-matrix element #4]
datatype: COMBO
def_value: None
combo_def_1: One
combo_def_2: Two
combo_def_3: Three
combo_def_4: Four
combo_def_5: Five
combo_def_6: Six
combo_def_7: Seven
combo_def_8: Eight
combo_def_9: Nine
combo_def_10: None
group: Cross-talk
section: Cross-talk
state_quant: Number of qubits
state_value_1: Five
state_value_2: Four

[CT-matrix element #5]
datatype: COMBO
def_value: None
combo_def_1: One
combo_def_2: Two
combo_def_3: Three
combo_def_4: Four
combo_def_5: Five
combo_def_6: Six
combo_def_7: Seven
combo_def_8: Eight
combo_def_9: Nine
combo_def_10: None
group: Cross-talk
section: Cross-talk
state_quant: Number of qubits
state_value_1: Five

# Readout
#######################

[Readout pulse type]
datatype: COMBO
combo_def_1: Gaussian
combo_def_2: Square
combo_def_3: Ramp
combo_def_4: Cosine
def_value: Square
group: Readout
section: Readout

[Readout truncation range]
datatype: DOUBLE
def_value: 3
state_quant: Readout pulse type
state_value_1: Gaussian
group: Readout
section: Readout

[Readout start at zero]
label: Start at zero
datatype: BOOLEAN
def_value: 0
state_quant: Readout pulse type
state_value_1: Gaussian
group: Readout
section: Readout

[Uniform readout amplitude]
label: Uniform amplitude
datatype: BOOLEAN
def_value: True
group: Readout
section: Readout

[Readout amplitude]
label: Amplitude
datatype: DOUBLE
def_value: 0.1
unit: V
state_quant: Uniform readout amplitude
state_value: True
group: Readout
section: Readout

[Uniform readout pulse shape]
label: Uniform pulse shape
datatype: BOOLEAN
def_value: True
group: Readout
section: Readout

[Readout width]
label: Width
datatype: DOUBLE
unit: s
def_value: 10E-9
state_quant: Uniform readout pulse shape
state_value_1: True
group: Readout
section: Readout
show_in_measurement_dlg: True

[Readout duration]
label: Duration
datatype: DOUBLE
def_value: 2E-6
unit: s
state_quant: Uniform readout pulse shape
state_value_1: True
group: Readout
section: Readout

[Add readout noise]
datatype: BOOLEAN
def_value: 0
group: Readout
section: Readout

[Readout noise amplitude]
datatype: DOUBLE
def_value: 0
group: Readout
section: Readout

[Match main sequence waveform size]
datatype: BOOLEAN
tooltip: If checked, the readout waveform will have the same number of point as the main pulse waveforms
def_value: 0
group: Readout
section: Readout

[Distribute readout phases]
datatype: BOOLEAN
tooltip: If checked, the readout tone phases will be distributed to avoid large peak-to-peak voltages
def_value: 0
group: Readout
section: Readout

[Readout delay]
datatype: DOUBLE
unit: s
group: Readout
section: Readout
show_in_measurement_dlg: True

[Readout I/Q ratio]
datatype: DOUBLE
def_value: 1.0
tooltip: Ratio of I/Q voltages to compensate for I/Q mixer arm imbalance.
group: Readout
section: Readout

[Readout offset - I]
label: Offset I
tooltip: Readout mixer I offset
datatype: DOUBLE
def_value: 0
unit: V
group: Readout
section: Readout

[Readout offset - Q]
label: Offset Q
tooltip: Readout mixer Q offset
datatype: DOUBLE
def_value: 0
unit: V
group: Readout
section: Readout

[Readout IQ skew]
label: IQ skew
unit: deg
tooltip: Readout IQ mixer phase skew
datatype: DOUBLE
def_value: 0
group: Readout
section: Readout

[Readout amplitude #1]
label: Amplitude
datatype: DOUBLE
def_value: 0.1
unit: V
state_quant: Uniform readout amplitude
state_value_1: False
group: Readout #1
section: Readout

[Readout width #1]
label: Width
datatype: DOUBLE
unit: s
def_value: 10E-9
state_quant: Uniform readout pulse shape
state_value_1: False
group: Readout #1
section: Readout
show_in_measurement_dlg: True

[Readout duration #1]
label: Duration
datatype: DOUBLE
def_value: 2E-6
unit: s
state_quant: Uniform readout pulse shape
state_value_1: False
group: Readout #1
section: Readout

[Readout frequency #1]
label: Frequency
datatype: DOUBLE
def_value: 0.0
unit: Hz
group: Readout #1
section: Readout

[Readout amplitude #2]
label: Amplitude
datatype: DOUBLE
def_value: 0.1
unit: V
state_quant: Uniform readout amplitude
state_value_1: False
group: Readout #2
section: Readout

[Readout width #2]
label: Width
datatype: DOUBLE
unit: s
def_value: 10E-9
state_quant: Uniform readout pulse shape
state_value_1: False
group: Readout #2
section: Readout
show_in_measurement_dlg: True

[Readout duration #2]
label: Duration
datatype: DOUBLE
def_value: 2E-6
unit: s
state_quant: Uniform readout pulse shape
state_value_1: False
group: Readout #2
section: Readout

[Readout frequency #2]
label: Frequency
datatype: DOUBLE
def_value: 0.0
unit: Hz
group: Readout #2
section: Readout

[Readout amplitude #3]
label: Amplitude
datatype: DOUBLE
def_value: 0.1
unit: V
state_quant: Uniform readout amplitude
state_value_1: False
group: Readout #3
section: Readout

[Readout width #3]
label: Width
datatype: DOUBLE
unit: s
def_value: 10E-9
state_quant: Uniform readout pulse shape
state_value_1: False
group: Readout #3
section: Readout
show_in_measurement_dlg: True

[Readout duration #3]
label: Duration
datatype: DOUBLE
def_value: 2E-6
unit: s
state_quant: Uniform readout pulse shape
state_value_1: False
group: Readout #3
section: Readout

[Readout frequency #3]
label: Frequency
datatype: DOUBLE
def_value: 0.0
unit: Hz
group: Readout #3
section: Readout

[Readout amplitude #4]
label: Amplitude
datatype: DOUBLE
def_value: 0.1
unit: V
state_quant: Uniform readout amplitude
state_value_1: False
group: Readout #4
section: Readout

[Readout width #4]
label: Width
datatype: DOUBLE
unit: s
def_value: 10E-9
state_quant: Uniform readout pulse shape
state_value_1: False
group: Readout #4
section: Readout
show_in_measurement_dlg: True

[Readout duration #4]
label: Duration
datatype: DOUBLE
def_value: 2E-6
unit: s
state_quant: Uniform readout pulse shape
state_value_1: False
group: Readout #4
section: Readout

[Readout frequency #4]
label: Frequency
datatype: DOUBLE
def_value: 0.0
unit: Hz
group: Readout #4
section: Readout

[Readout amplitude #5]
label: Amplitude
datatype: DOUBLE
def_value: 0.1
unit: V
state_quant: Uniform readout amplitude
state_value_1: False
group: Readout #5
section: Readout

[Readout width #5]
label: Width
datatype: DOUBLE
unit: s
def_value: 10E-9
state_quant: Uniform readout pulse shape
state_value_1: False
group: Readout #5
section: Readout
show_in_measurement_dlg: True

[Readout duration #5]
label: Duration
datatype: DOUBLE
def_value: 2E-6
unit: s
state_quant: Uniform readout pulse shape
state_value_1: False
group: Readout #5
section: Readout

[Readout frequency #5]
label: Frequency
datatype: DOUBLE
def_value: 0.0
unit: Hz
group: Readout #5
section: Readout

[Readout amplitude #6]
label: Amplitude
datatype: DOUBLE
def_value: 0.1
unit: V
state_quant: Uniform readout amplitude
state_value_1: False
group: Readout #6
section: Readout

[Readout width #6]
label: Width
datatype: DOUBLE
unit: s
def_value: 10E-9
state_quant: Uniform readout pulse shape
state_value_1: False
group: Readout #6
section: Readout
show_in_measurement_dlg: True

[Readout duration #6]
label: Duration
datatype: DOUBLE
def_value: 2E-6
unit: s
state_quant: Uniform readout pulse shape
state_value_1: False
group: Readout #6
section: Readout

[Readout frequency #6]
label: Frequency
datatype: DOUBLE
def_value: 0.0
unit: Hz
group: Readout #6
section: Readout

[Readout amplitude #7]
label: Amplitude
datatype: DOUBLE
def_value: 0.1
unit: V
state_quant: Uniform readout amplitude
state_value_1: False
group: Readout #7
section: Readout

[Readout width #7]
label: Width
datatype: DOUBLE
unit: s
def_value: 10E-9
state_quant: Uniform readout pulse shape
state_value_1: False
group: Readout #7
section: Readout
show_in_measurement_dlg: True

[Readout duration #7]
label: Duration
datatype: DOUBLE
def_value: 2E-6
unit: s
state_quant: Uniform readout pulse shape
state_value_1: False
group: Readout #7
section: Readout

[Readout frequency #7]
label: Frequency
datatype: DOUBLE
def_value: 0.0
unit: Hz
group: Readout #7
section: Readout

[Readout amplitude #8]
label: Amplitude
datatype: DOUBLE
def_value: 0.1
unit: V
state_quant: Uniform readout amplitude
state_value_1: False
group: Readout #8
section: Readout

[Readout width #8]
label: Width
datatype: DOUBLE
unit: s
def_value: 10E-9
state_quant: Uniform readout pulse shape
state_value_1: False
group: Readout #8
section: Readout
show_in_measurement_dlg: True

[Readout duration #8]
label: Duration
datatype: DOUBLE
def_value: 2E-6
unit: s
state_quant: Uniform readout pulse shape
state_value_1: False
group: Readout #8
section: Readout

[Readout frequency #8]
label: Frequency
datatype: DOUBLE
def_value: 0.0
unit: Hz
group: Readout #8
section: Readout

[Readout amplitude #9]
label: Amplitude
datatype: DOUBLE
def_value: 0.1
unit: V
state_quant: Uniform readout amplitude
state_value_1: False
group: Readout #9
section: Readout

[Readout width #9]
label: Width
datatype: DOUBLE
unit: s
def_value: 10E-9
state_quant: Uniform readout pulse shape
state_value_1: False
group: Readout #9
section: Readout
show_in_measurement_dlg: True

[Readout duration #9]
label: Duration
datatype: DOUBLE
def_value: 2E-6
unit: s
state_quant: Uniform readout pulse shape
state_value_1: False
group: Readout #9
section: Readout

[Readout frequency #9]
label: Frequency
datatype: DOUBLE
def_value: 0.0
unit: Hz
group: Readout #9
section: Readout

[Predistort readout waveform]
datatype: BOOLEAN
tooltip: If checked, the readout waveform will be predistorted to increase the rise time
def_value: 0
group: Readout predistortion
section: Readout

[Resonator linewidth]
datatype: DOUBLE
def_value: 1E6
unit: Hz
tooltip: Measured resonator linewidth
state_quant: Predistort readout waveform
state_value: 1
group: Readout predistortion
section: Readout

[Target rise time]
datatype: DOUBLE
def_value: 50E-9
unit: s
tooltip: Intended resonator ring-up time
state_quant: Predistort readout waveform
state_value: 1
group: Readout predistortion
section: Readout

[Generate readout trig]
datatype: BOOLEAN
group: Readout trig
section: Readout
[Readout trig amplitude]
datatype: DOUBLE
def_value: 1.0
unit: V
group: Readout trig
section: Readout
[Readout trig duration]
datatype: DOUBLE
def_value: 20E-9
unit: s
group: Readout trig
section: Readout


[Swap IQ]
datatype: BOOLEAN
group: Output
section: Output


# Gate settings
#######################
[Generate gate]
datatype: BOOLEAN
def_value: 1
group: Microwave gate switch
section: Output

[Uniform gate]
datatype: BOOLEAN
def_value: 0
state_quant: Generate gate
state_value: 1
group: Microwave gate switch
section: Output

[Gate delay]
datatype: DOUBLE
unit: s
def_value: -60E-9
low_lim: -1E-6
high_lim: 1E-6
group: Microwave gate switch
section: Output

[Gate overlap]
datatype: DOUBLE
unit: s
def_value: 20E-9
group: Microwave gate switch
section: Output

[Minimal gate time]
datatype: DOUBLE
unit: s
def_value: 20E-9
group: Microwave gate switch
section: Output

[Trace - I1]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Traces
section: Output
show_in_measurement_dlg: True
[Trace - Q1]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Traces
section: Output
show_in_measurement_dlg: True
[Trace - G1]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Traces
section: Output
show_in_measurement_dlg: True
[Trace - Z1]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Traces
section: Output
show_in_measurement_dlg: True


[Trace - I2]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Traces
state_quant: Number of qubits
state_value_1: Nine
state_value_2: Eight
state_value_3: Seven
state_value_4: Six
state_value_5: Five
state_value_6: Four
state_value_7: Three
state_value_8: Two
section: Output
[Trace - Q2]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Traces
state_quant: Number of qubits
state_value_1: Nine
state_value_2: Eight
state_value_3: Seven
state_value_4: Six
state_value_5: Five
state_value_6: Four
state_value_7: Three
state_value_8: Two
section: Output
[Trace - G2]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Traces
state_quant: Number of qubits
state_value_1: Nine
state_value_2: Eight
state_value_3: Seven
state_value_4: Six
state_value_5: Five
state_value_6: Four
state_value_7: Three
state_value_8: Two
section: Output
[Trace - Z2]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Traces
state_quant: Number of qubits
state_value_1: Nine
state_value_2: Eight
state_value_3: Seven
state_value_4: Six
state_value_5: Five
state_value_6: Four
state_value_7: Three
state_value_8: Two
section: Output

[Trace - I3]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Traces
state_quant: Number of qubits
state_value_1: Nine
state_value_2: Eight
state_value_3: Seven
state_value_4: Six
state_value_5: Five
state_value_6: Four
state_value_7: Three
section: Output
[Trace - Q3]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Traces
state_quant: Number of qubits
state_value_1: Nine
state_value_2: Eight
state_value_3: Seven
state_value_4: Six
state_value_5: Five
state_value_6: Four
state_value_7: Three
section: Output
[Trace - G3]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Traces
state_quant: Number of qubits
state_value_1: Nine
state_value_2: Eight
state_value_3: Seven
state_value_4: Six
state_value_5: Five
state_value_6: Four
state_value_7: Three
section: Output
[Trace - Z3]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Traces
state_quant: Number of qubits
state_value_1: Nine
state_value_2: Eight
state_value_3: Seven
state_value_4: Six
state_value_5: Five
state_value_6: Four
state_value_7: Three
section: Output

[Trace - I4]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Traces
state_quant: Number of qubits
state_value_1: Nine
state_value_2: Eight
state_value_3: Seven
state_value_4: Six
state_value_5: Five
state_value_6: Four
section: Output
[Trace - Q4]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Traces
state_quant: Number of qubits
state_value_1: Nine
state_value_2: Eight
state_value_3: Seven
state_value_4: Six
state_value_5: Five
state_value_6: Four
section: Output
[Trace - G4]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Traces
state_quant: Number of qubits
state_value_1: Nine
state_value_2: Eight
state_value_3: Seven
state_value_4: Six
state_value_5: Five
state_value_6: Four
section: Output
[Trace - Z4]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Traces
state_quant: Number of qubits
state_value_1: Nine
state_value_2: Eight
state_value_3: Seven
state_value_4: Six
state_value_5: Five
state_value_6: Four
section: Output

[Trace - I5]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Traces
state_quant: Number of qubits
state_value_1: Nine
state_value_2: Eight
state_value_3: Seven
state_value_4: Six
state_value_5: Five
section: Output
[Trace - Q5]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Traces
state_quant: Number of qubits
state_value_1: Nine
state_value_2: Eight
state_value_3: Seven
state_value_4: Six
state_value_5: Five
section: Output
[Trace - G5]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Traces
state_quant: Number of qubits
state_value_1: Nine
state_value_2: Eight
state_value_3: Seven
state_value_4: Six
state_value_5: Five
section: Output
[Trace - Z5]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Traces
state_quant: Number of qubits
state_value_1: Nine
state_value_2: Eight
state_value_3: Seven
state_value_4: Six
state_value_5: Five
section: Output

[Trace - I6]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Traces
state_quant: Number of qubits
state_value_1: Nine
state_value_2: Eight
state_value_3: Seven
state_value_4: Six
section: Output
[Trace - Q6]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Traces
state_quant: Number of qubits
state_value_1: Nine
state_value_2: Eight
state_value_3: Seven
state_value_4: Six
section: Output
[Trace - G6]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Traces
state_quant: Number of qubits
state_value_1: Nine
state_value_2: Eight
state_value_3: Seven
state_value_4: Six
section: Output
[Trace - Z6]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Traces
state_quant: Number of qubits
state_value_1: Nine
state_value_2: Eight
state_value_3: Seven
state_value_4: Six
section: Output

[Trace - I7]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Traces
state_quant: Number of qubits
state_value_1: Nine
state_value_2: Eight
state_value_3: Seven
section: Output
[Trace - Q7]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Traces
state_quant: Number of qubits
state_value_1: Nine
state_value_2: Eight
state_value_3: Seven
section: Output
[Trace - G7]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Traces
state_quant: Number of qubits
state_value_1: Nine
state_value_2: Eight
state_value_3: Seven
section: Output
[Trace - Z7]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Traces
state_quant: Number of qubits
state_value_1: Nine
state_value_2: Eight
state_value_3: Seven
section: Output

[Trace - I8]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Traces
state_quant: Number of qubits
state_value_1: Nine
state_value_2: Eight
section: Output
[Trace - Q8]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Traces
state_quant: Number of qubits
state_value_1: Nine
state_value_2: Eight
section: Output
[Trace - G8]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Traces
state_quant: Number of qubits
state_value_1: Nine
state_value_2: Eight
section: Output
[Trace - Z8]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Traces
state_quant: Number of qubits
state_value_1: Nine
state_value_2: Eight
section: Output

[Trace - I9]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Traces
state_quant: Number of qubits
state_value_1: Nine
section: Output
[Trace - Q9]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Traces
state_quant: Number of qubits
state_value_1: Nine
section: Output
[Trace - G9]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Traces
state_quant: Number of qubits
state_value_1: Nine
section: Output
[Trace - Z9]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Traces
state_quant: Number of qubits
state_value_1: Nine
section: Output

[Trace - Readout trig]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Traces
section: Output
show_in_measurement_dlg: True

[Trace - Readout I]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Traces
section: Output
show_in_measurement_dlg: True

[Trace - Readout Q]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Traces
section: Output
show_in_measurement_dlg: True


# Demodulation
#######################

[Demodulation - Skip]
label: Skip start
datatype: DOUBLE
def_value: 0.0
unit: s
section: Demodulation
group: Demodulation
[Demodulation - Length]
label: Length
datatype: DOUBLE
def_value: 1E-6
unit: s
section: Demodulation
group: Demodulation
[Demodulation - Frequency offset]
label: Frequency offset
datatype: DOUBLE
def_value: 0
unit: Hz
tooltip: Frequency difference between LO used for up- and downconversion, f_down - f_up
section: Demodulation
group: Demodulation
[Demodulation - Number of records]
label: Number of records
datatype: DOUBLE
def_value: 1
low_lim: 1
tooltip: NB!  This will be removed in future versions, records should be set by input waveform
section: Demodulation
group: Demodulation
[Use phase reference signal]
datatype: BOOLEAN
def_value: True
section: Demodulation
group: Demodulation
[Demodulation - IQ]
datatype: BOOLEAN
def_value: False
section: Demodulation
group: Demodulation
[Demodulation - Input]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: WRITE
state_quant: Demodulation - IQ
state_value: False
section: Demodulation
group: Demodulation
show_in_measurement_dlg: True
[Demodulation - Input I]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: WRITE
state_quant: Demodulation - IQ
state_value: True
section: Demodulation
group: Demodulation
show_in_measurement_dlg: True
[Demodulation - Input Q]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: WRITE
state_quant: Demodulation - IQ
state_value: True
section: Demodulation
group: Demodulation
show_in_measurement_dlg: True
[Demodulation - Reference]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: WRITE
section: Demodulation
group: Demodulation
show_in_measurement_dlg: True
[Diagonalize Readout]
def_value: False
datatype: BOOLEAN
section: Demodulation
group: Demodulation
[Rotate - 11]
datatype: DOUBLE
def_value: 0
state_quant: Diagonalize Readout
state_value: True
section: Demodulation
group: Demodulation
[Rotate - 12]
datatype: DOUBLE
def_value: 0
state_quant: Diagonalize Readout
state_value: True
section: Demodulation
group: Demodulation
[Rotate - 21]
datatype: DOUBLE
def_value: 0
state_quant: Diagonalize Readout
state_value: True
section: Demodulation
group: Demodulation
[Rotate - 22]
datatype: DOUBLE
def_value: 0
state_quant: Diagonalize Readout
state_value: True
section: Demodulation
group: Demodulation
[Scale - 11]
datatype: DOUBLE
def_value: 1
state_quant: Diagonalize Readout
state_value: True
section: Demodulation
group: Demodulation
[Scale - 12]
datatype: DOUBLE
def_value: 0
state_quant: Diagonalize Readout
state_value: True
section: Demodulation
group: Demodulation
[Scale - 21]
datatype: DOUBLE
def_value: 0
state_quant: Diagonalize Readout
state_value: True
section: Demodulation
group: Demodulation
[Scale - 22]
datatype: DOUBLE
def_value: 1
state_quant: Diagonalize Readout
state_value: True
section: Demodulation
group: Demodulation

[Voltage, QB1]
unit: V
datatype: COMPLEX
permission: READ
group: Demodulation
section: Demodulation
show_in_measurement_dlg: True
[Voltage, QB2]
unit: V
datatype: COMPLEX
permission: READ
group: Demodulation
state_quant: Number of qubits
state_value_1: Nine
state_value_2: Eight
state_value_3: Seven
state_value_4: Six
state_value_5: Five
state_value_6: Four
state_value_7: Three
state_value_8: Two
section: Demodulation
[Voltage, QB3]
unit: V
datatype: COMPLEX
permission: READ
group: Demodulation
state_quant: Number of qubits
state_value_1: Nine
state_value_2: Eight
state_value_3: Seven
state_value_4: Six
state_value_5: Five
state_value_6: Four
state_value_7: Three
section: Demodulation
[Voltage, QB4]
unit: V
datatype: COMPLEX
permission: READ
group: Demodulation
state_quant: Number of qubits
state_value_1: Nine
state_value_2: Eight
state_value_3: Seven
state_value_4: Six
state_value_5: Five
state_value_6: Four
section: Demodulation
[Voltage, QB5]
unit: V
datatype: COMPLEX
permission: READ
group: Demodulation
state_quant: Number of qubits
state_value_1: Nine
state_value_2: Eight
state_value_3: Seven
state_value_4: Six
state_value_5: Five
section: Demodulation
[Voltage, QB6]
unit: V
datatype: COMPLEX
permission: READ
group: Demodulation
state_quant: Number of qubits
state_value_1: Nine
state_value_2: Eight
state_value_3: Seven
state_value_4: Six
section: Demodulation
[Voltage, QB7]
unit: V
datatype: COMPLEX
permission: READ
group: Demodulation
state_quant: Number of qubits
state_value_1: Nine
state_value_2: Eight
state_value_3: Seven
section: Demodulation
[Voltage, QB8]
unit: V
datatype: COMPLEX
permission: READ
group: Demodulation
state_quant: Number of qubits
state_value_1: Nine
state_value_2: Eight
section: Demodulation
[Voltage, QB9]
unit: V
datatype: COMPLEX
permission: READ
group: Demodulation
state_quant: Number of qubits
state_value_1: Nine
section: Demodulation


[Single-shot, QB1]
unit: V
datatype: VECTOR_COMPLEX
permission: READ
group: Demodulation
section: Demodulation
show_in_measurement_dlg: True
[Single-shot, QB2]
unit: V
datatype: VECTOR_COMPLEX
permission: READ
group: Demodulation
state_quant: Number of qubits
state_value_1: Nine
state_value_2: Eight
state_value_3: Seven
state_value_4: Six
state_value_5: Five
state_value_6: Four
state_value_7: Three
state_value_8: Two
section: Demodulation
[Single-shot, QB3]
unit: V
datatype: VECTOR_COMPLEX
permission: READ
group: Demodulation
state_quant: Number of qubits
state_value_1: Nine
state_value_2: Eight
state_value_3: Seven
state_value_4: Six
state_value_5: Five
state_value_6: Four
state_value_7: Three
section: Demodulation
[Single-shot, QB4]
unit: V
datatype: VECTOR_COMPLEX
permission: READ
group: Demodulation
state_quant: Number of qubits
state_value_1: Nine
state_value_2: Eight
state_value_3: Seven
state_value_4: Six
state_value_5: Five
state_value_6: Four
section: Demodulation
[Single-shot, QB5]
unit: V
datatype: VECTOR_COMPLEX
permission: READ
group: Demodulation
state_quant: Number of qubits
state_value_1: Nine
state_value_2: Eight
state_value_3: Seven
state_value_4: Six
state_value_5: Five
section: Demodulation
[Single-shot, QB6]
unit: V
datatype: VECTOR_COMPLEX
permission: READ
group: Demodulation
state_quant: Number of qubits
state_value_1: Nine
state_value_2: Eight
state_value_3: Seven
state_value_4: Six
section: Demodulation
[Single-shot, QB7]
unit: V
datatype: VECTOR_COMPLEX
permission: READ
group: Demodulation
state_quant: Number of qubits
state_value_1: Nine
state_value_2: Eight
state_value_3: Seven
section: Demodulation
[Single-shot, QB8]
unit: V
datatype: VECTOR_COMPLEX
permission: READ
group: Demodulation
state_quant: Number of qubits
state_value_1: Nine
state_value_2: Eight
section: Demodulation
[Single-shot, QB9]
unit: V
datatype: VECTOR_COMPLEX
permission: READ
group: Demodulation
state_quant: Number of qubits
state_value_1: Nine
section: Demodulation
